WorkflowBuilder(Version=2.9.0)
GroupWorkflow Visualizer
    Bonsai.Vision.FileCapture
      FileName=C:\Users\MF\Documents\GitHub\Bonfly\Moita-Bonfly\ExampleVideos\Good.avi
      PlaybackRate=0
      StartPosition=0
      PositionUnits=Frames
      Loop=false
      Playing=true
    -> Bonsai.Vision.Grayscale
    -> PublishSubject Video

    SubscribeSubject Video
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=7, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=nil)
    -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
    -> Bonsai.Dsp.CountNonZero
    -> PublishSubject GPIO

    SubscribeSubject SessionTimer
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #10
    SubscribeSubject FileName
    -> MemberSelector(Selector=Item2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #13
    #10, #13 -> Bonsai.Gui.TableLayoutPanelBuilder ExperimentVisualizer
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 20pt"
      ColumnCount=12
      RowCount=1
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=3, RowSpan=1), CellSpan(ColumnSpan=9, RowSpan=1))
    -> Bonsai.Design.VisualizerWindow(Text=ExperimentSession, Visible=true, Location(X=0, Y=100), Size(Width=1190, Height=85), WindowState=Normal)

    SubscribeSubject Video
    -> Bonsai.Design.VisualizerWindow(Text="CamA - Door", Visible=true, Location(X=0, Y=180), Size(Width=600, Height=550), WindowState=Normal)

    SubscribeSubject Video
    -> Bonsai.Design.VisualizerWindow(Text="CamB - Back", Visible=true, Location(X=590, Y=180), Size(Width=600, Height=550), WindowState=Normal)

    SubscribeSubject GPIO
    -> Bonsai.Design.VisualizerWindow(Text="StimuliSignal - CamA", Visible=true, Location(X=0, Y=730), Size(Width=600, Height=250), WindowState=Normal)

    SubscribeSubject GPIO
    -> Bonsai.Design.VisualizerWindow(Text="StimuliSignal - CamB", Visible=true, Location(X=590, Y=730), Size(Width=600, Height=250), WindowState=Normal)

    SubscribeSubject GPIO
    -> Bonsai.Design.VisualizerWindow(Text="GPIO - CamA", Visible=true, Location(X=1180, Y=475), Size(Width=515, Height=150), WindowState=Normal)

    SubscribeSubject GPIO
    -> Bonsai.Design.VisualizerWindow(Text="GPIO - CamB", Visible=true, Location(X=1180, Y=620), Size(Width=515, Height=150), WindowState=Normal)

Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=true)
-> PublishSubject StartExperiment

Annotation README(Text="# FlyHigherProtocol\n")

ExternalizedMapping
  "⚠ LED - COM Port"
  "⚠ LED - IR Intensity"
  "⚠ CamA (Door) - SerialNumber"
  "⚠ CamB (Back) - SerialNumber"
  "⚠ Stimulation Screen"
  "⚠ Schema - OptoStim"
  "Schema - VisualStim"
  ".Experiment Duration"
  ".Sampling Rate"
  "0. Save Folder"
  "1. Experimenter"
  "2. Genotype"
  "3. Protocol"
  "4. Sex"
  "5. Age"
  "6. FH Setup"
-> GroupWorkflow Settings
    ExternalizedMapping("⚠ LED - COM Port", "⚠ LED - IR Intensity")
    -> Disable GroupWorkflow LEDboardSettings
        BehaviorSubject<Bonsai.Harp.HarpMessage> LedBoardCommands => #0
        ExternalizedMapping => #1
          PortName
            DisplayName="⚠ LED - COM Port"
            Description="⚠⚠⚠ COM PORT IS SETUP SENSITIVE ⚠⚠⚠\r\n\r\nThe COM Port where the Harp Board is plugged in.\r\n\r\n@navigate [v]\r\ne.g. COM7"
            Category="1. Hardware Config"
        #0, #1 -> Bonsai.Harp.Device
          OperationMode=Active
          OperationLed=Off
          DumpRegisters=true
          VisualIndicators=Off
          Heartbeat=Disabled
          IgnoreErrors=false
          PortName="{{@dropdown COMn}}"
        -> PublishSubject LedBoardEvents
        -> WorkflowOutput

        ExternalizedMapping
          Value
            DisplayName="⚠ LED - IR Intensity"
            Description="⚠⚠⚠ IR INTENSITIES ARE SETUP SENSITIVE ⚠⚠⚠\r\n\r\nIntensity of the IR LEDs.\r\n\r\n@type: int\r\ne.g. 60\r\n\r\n☑ FH0 = 60  |  FH1 = 100  |  FH2 = 88  |  FH3 = 60\r\n☑ Last defined: 12-08-2025"
            Category="1. Hardware Config"
        -> IntProperty(Value=100)
        -> Bonsai.Harp.CF.LedArrayCommand(Type=WriteAuxiliaryIntensity, Mask=Index0) => #7
        BooleanProperty(Value=true)
        -> Bonsai.Harp.CF.LedArrayCommand(Type=SetAuxiliaryOutput, Mask=Index1)
        -> Delay(DueTime=PT0.01S) => #10
        #7, #10 -> Merge
        -> MulticastSubject LedBoardCommands

    ExternalizedMapping("⚠ CamA (Door) - SerialNumber", "⚠ CamB (Back) - SerialNumber")
    -> Disable GroupWorkflow CameraSettings
        ExternalizedMapping
          SerialNumber
            DisplayName="⚠ CamA (Door) - SerialNumber"
            Description="Serial number of the camera close to the door\r\n\r\n@select [v]\r\ne.g. 4563758\r\n\r\n⚠ check if camera matches prediction (door, back)\r\n"
            Category="1. Hardware Config"
        -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber="{{@dropdown Cam A SN}}", ColorProcessing=Default)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #2
          Expression:
            new(
            It.Image as Image,
            It.ChunkData.ExposureEndLineStatusAll as GPIO,
            It.ChunkData.FrameID as FrameID,
            It.ChunkData.Timestamp as Timestamp
            )
        ExternalizedMapping
          SerialNumber
            DisplayName="⚠ CamB (Back) - SerialNumber"
            Description="Serial number of the camera in the back\r\n\r\n@select [v]\r\ne.g. 4563758\r\n\r\n⚠ check if camera matches prediction (door, back)\r\n"
            Category="1. Hardware Config"
        -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber="{{@dropdown Cam B SN}}", ColorProcessing=Default)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #5
          Expression:
            new(
            It.Image as Image,
            It.ChunkData.ExposureEndLineStatusAll as GPIO,
            It.ChunkData.FrameID as FrameID,
            It.ChunkData.Timestamp as Timestamp
            )
        #2, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            Item1 as CamA,
            Item2 as CamB
            )
        -> PublishSubject Cameras
        -> WorkflowOutput

    ExternalizedMapping("⚠ Stimulation Screen", "Background color", TargetRenderFrequency, Width, Height, "Color Logic", "Square Y Position", "Square X Position")
    -> GroupWorkflow ScreenSettings
        ExternalizedMapping
          DisplayDevice
            DisplayName="⚠ Stimulation Screen"
            Description="Select the monitor to render Visual Stimuli.\r\n\r\n@navigate [v]\r\ne.g. First"
            Category="1. Hardware Config"
          ClearColor
            DisplayName="Background color"
            Description="Set background color of the stimulation screen.\r\n\r\n@navigate [v]\r\n\r\n☑ if visual stim background color alpha parameter is set to 1, the screen will decide background color."
            Category="Stimulation Screen Settings"
          TargetRenderFrequency(Category="Stimulation Screen Settings")
          Width(Description="in pixels", Category="Stimulation Screen Settings")
          Height(Description="in pixels", Category="Stimulation Screen Settings")
        -> Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=true
          ClearColor=DimGray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Hidden
          WindowState=Maximized
          DisplayDevice=Primary
          TargetRenderFrequency=240
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> IncludeWorkflow(Path=Extensions\BonFlyResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=Extensions\BonFlyView.bonsai, Left=-27.185, Right=27.185, Bottom=-15.13, Top=15.13)
        -> PublishSubject Draw

        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.CreateOrthographicOffCenter(Left=-1, Right=1, Bottom=-1, Top=1, NearClip=-1000, FarClip=1000)
        -> Take(Count=1)
        -> AsyncSubject BackgroundView

        BooleanProperty(Value=false)
        -> BehaviorSubject SyncState

        SubscribeSubject Draw => #14
        SubscribeSubject SyncState => #15
        ExternalizedMapping(Expression(DisplayName="Color Logic", Description="Logic applied to decide the color of the photodiode indicator.", Category="Photodiode Properties")) => #16
        #15, #16 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 0 : 1
        -> PropertyMapping(ColorR, ColorG, ColorB) => #18
        ExternalizedMapping
          Value
            DisplayName="Square Y Position"
            Description="Position of the photodiode indicator along the Height of the monitor. 1: Up, -1: Bottom"
            Category="Photodiode Properties"
        -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it*13.9
        -> PropertyMapping(LocationY) => #22
        ExternalizedMapping
          Value
            DisplayName="Square X Position"
            Description="Position of the photodiode indicator along the Width of the monitor. 1: Right, -1: Left"
            Category="Photodiode Properties"
        -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it*26
        -> PropertyMapping(LocationX) => #26
        #14, #18, #22, #26 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=2
          ExtentY=2
          LocationX=26
          LocationY=13.9
          Layer=0
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1

    ExternalizedMapping("⚠ Schema - OptoStim", "Schema - VisualStim", ".Experiment Duration", ".Sampling Rate", .BufferVideo)
    -> GroupWorkflow ExperimentSettings
      Description:
        Experimental stimuli parameters

        expects: Schemas/ .yml files
      Workflow
        ExternalizedMapping(Path(DisplayName="⚠ Schema - OptoStim", Category="2. Experiment Design"))
        -> LoadSettings(Path=Schemas\Repo\NoStimulus.yml)
        -> AsyncSubject OptoStimuliSettings

        ExternalizedMapping(Path(DisplayName="Schema - VisualStim", Category="2. Experiment Design"))
        -> LoadSettings(Path=Schemas\Repo\NoStimulus.yml)
        -> AsyncSubject VisualStimuliSettings

        ExternalizedMapping
          Value
            DisplayName=".Experiment Duration"
            Description="Duration of the experiment in seconds \r\n\r\nThis is used to time data acquisition\r\n(DataLength = FrameRate * ExpDuration)\r\n\r\n@type: int (sec)\r\n\r\n⚠ acquisition will last for 10 more seconds"
            Category="2. Experiment Design"
        -> IntProperty(Value=600) => #7
        ExternalizedMapping(Value(DisplayName=.BufferVideo, Category="2. Experiment Design"))
        -> IntProperty(Value=5)
        -> Multiply(Operand=IntProperty(Value=2))
        -> PropertyMapping(Value) => #11
        #7, #11 -> Add(Operand=IntProperty(Value=10)) => #12
        ExternalizedMapping
          Value
            DisplayName=".Sampling Rate"
            Description="Cameras Frame Rate\r\n\r\nThis is used to time data acquisition\r\n(DataLength = FrameRate * ExpDuration)\r\n\r\n@type: int (Hz)\r\n\r\n☑ expected to be the same as camera acquisition\r\n⚠ expected to match across cameras"
            Category="2. Experiment Design"
        -> IntProperty(Value=60)
        -> PublishSubject SamplingRate => #15
        #12, #15 -> Zip
        -> Multiply
        -> BehaviorSubject ExpDuration

    ExternalizedMapping("0. Save Folder", "1. Experimenter", "2. Genotype", "3. Protocol", "4. Sex", "5. Age", "6. FH Setup")
    -> GroupWorkflow FilenameSettings(Description="Used to generate filenames")
        ExternalizedMapping
          Value
            DisplayName="0. Save Folder"
            Description="Path to the folder where to save the data.\r\n\r\n@navigate to path [...]\r\ne.g. .../ExpFolder/RawData\r\n\r\n☑ convention: /RawData"
            Category="3. Filename Generator"
        -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value=C:\Users\MF\Documents\GitHub\Bonfly\Moita-Bonfly\ExampleVideos)
        -> Take(Count=1)
        -> AsyncSubject RootPath => #3
        ExternalizedMapping(Value(DisplayName="1. Experimenter", Description="Initials of the Experimenter\r\n\r\n @type: str\r\ne.g. FH0", Category="3. Filename Generator"))
        -> StringProperty(Value=EI) => #5
        ExternalizedMapping
          Value
            DisplayName="2. Genotype"
            Description="Fly line genotype\r\n\r\n@type: str (user label)\r\ne.g. EmptySplitGal4_X_UASTNT"
            Category="3. Filename Generator"
        -> StringProperty(Value=GENO) => #7
        ExternalizedMapping
          Value
            DisplayName="3. Protocol"
            Description="Protocol/Treatment tested.\r\n\r\n@type: str (user label)\r\ne.g. 20Loom_25cm_s"
            Category="3. Filename Generator"
        -> StringProperty(Value=PROTOCOL) => #9
        ExternalizedMapping(Value(DisplayName="4. Sex", Description="Sex of the flies.\r\n\r\n@type: str\r\ne.g. Female", Category="3. Filename Generator"))
        -> StringProperty(Value=SEX) => #11
        ExternalizedMapping
          Value
            DisplayName="5. Age"
            Description="Age of the flies\r\n\r\n@type: str (days from eclosion)\r\ne.g. 3days; 3to5days\r\n\r\n☑ convention: Xdays\r\n☑ age interval convention: XtoXdays\r\n"
            Category="3. Filename Generator"
        -> StringProperty(Value=XtoYdays) => #13
        ExternalizedMapping(Value(DisplayName="6. FH Setup", Description="Experimental Setup used.\r\n\r\n @type: str\r\ne.g. FH0", Category="3. Filename Generator"))
        -> StringProperty(Value=FHn) => #15
        #5, #7, #9, #11, #13, #15 -> Zip
        -> Format(Format={0}-{1}-{2}-{3}-{4}-{5}-, Selector="Item1,Item2,Item3,Item4,Item5,Item6")
        -> Take(Count=1) => #18
        #3, #18 -> Zip
        -> BehaviorSubject FileName

GroupWorkflow TestStimuli
  Description:
    Test stimulus commands:

    VisualStimulus = Shift + V
    LEDContinuous = Shift + C
    LEDPulsed = Shift + P
    LEDRamped = Shift + R
  Workflow
    ExternalizedMapping(Path(DisplayName=TestVisualStim))
    -> LoadSettings(Path=Schemas\TestStim\TestVisualStim.yml) => #1
    Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Shift", SuppressRepetitions=false) => #2
    #1, #2 -> SubscribeWhen
    -> MemberSelector(Selector=Trials)
    -> Merge
    -> CreateObservable TestVisualStim
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisVisualTrial

        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=ControlNoisyStimuli)
        -> Condition Exists?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable ControlNoisyStimuli => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow => #14
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0.5S
              MaxRadius=25
              MonitorDistance=18.5
              InitialRadius=1
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=MaxRadius)
            -> PropertyMapping(Max) => #18
            #14, #18 -> Bonsai.Dsp.Rescale(Min=0, Max=25, RangeMin=0, RangeMax=1, RescaleType=Linear)
            -> PublishSubject Animation
            -> PropertyMapping(Contrast) => #21
            SubscribeSubject StimulusSettings
            -> PropertyMapping => #23
              Diameter(Selector=Diameter)
              OnColorR(Selector=OnColor.R)
              OnColorG(Selector=OnColor.G)
              OnColorB(Selector=OnColor.B)
              OnColorA(Selector=OnColor.A)
              OffColorR(Selector=OffColor.R)
              OffColorG(Selector=OffColor.G)
              OffColorB(Selector=OffColor.B)
              OffColorA(Selector=OffColor.A)
            #5, #21, #23 -> IncludeWorkflow => #24
              Path=Extensions\DrawCircleWithNoise.bonsai
              Diameter=25
              LocationX=0
              LocationY=0
              Layer=0
              OnColorR=0
              OnColorG=0
              OnColorB=0
              OnColorA=1
              OffColorR=0
              OffColorG=0
              OffColorB=0
              OffColorA=0
              Contrast=1
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #29
            #24, #29 -> SubscribeWhen => #30
            SubscribeSubject Animation
            -> Last => #32
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #36
            #32, #36 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #37
            #30, #37 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=LoomingImageStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable LoomingImageStimuli => #10
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0S
              MaxRadius=25
              MonitorDistance=18
              InitialRadius=0.5
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation
            -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #16
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=TextureName)
            -> PropertyMapping(TextureName) => #19
            #5, #16, #19 -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #25
            #20, #25 -> SubscribeWhen => #26
            SubscribeSubject Animation
            -> Last => #28
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #32
            #28, #32 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #33
            #26, #33 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=MovingCircleStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable MovingCircleStimuli => #14
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Duration(Selector=Duration), RangeBegin(Selector=StartPosition.X), RangeEnd(Selector=EndPosition.X))
            -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=0, RangeEnd=0) => #8
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Duration(Selector=Duration), RangeBegin(Selector=StartPosition.Y), RangeEnd(Selector=EndPosition.Y))
            -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=-15, RangeEnd=15) => #11
            #8, #11 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(Item1 as X, Item2 as Y)
            -> PublishSubject Animation
            -> PropertyMapping(LocationX(Selector=it.X), LocationY(Selector=it.Y)) => #15
            SubscribeSubject StimulusSettings
            -> PropertyMapping(ColorR(Selector=Color.R), ColorG(Selector=Color.G), ColorB(Selector=Color.B), ColorA(Selector=Color.A)) => #17
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Diameter(Selector=Radius)) => #19
            #5, #15, #17, #19 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=3.5, LocationX=0, LocationY=15, Layer=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #20
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #25
            #20, #25 -> SubscribeWhen => #26
            SubscribeSubject Animation
            -> Last => #28
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #32
            #28, #32 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #33
            #26, #33 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=LoomingCircleStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable LoomingCircleStimuli => #18
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0.5S
              MaxRadius=25
              MonitorDistance=18.5
              InitialRadius=1
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation
            -> PropertyMapping(Diameter) => #16
            SubscribeSubject StimulusSettings
            -> PropertyMapping(ColorR(Selector=Color.R), ColorG(Selector=Color.G), ColorB(Selector=Color.B), ColorA(Selector=Color.A)) => #18
            #5, #16, #18 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=25, LocationX=0, LocationY=0, Layer=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #19
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #24
            #19, #24 -> SubscribeWhen => #25
            SubscribeSubject Animation
            -> Last => #27
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #31
            #27, #31 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #32
            #25, #32 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput

            SubscribeSubject Animation => #38
            -> BufferCount(Count=10, Skip=10)
            -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=13)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #42
            #38 -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #43
            #42, #43 -> Bonsai.Gui.TableLayoutPanelBuilder
              Enabled=true
              Visible=true
              ColumnCount=8
              RowCount=1
              ColumnStyles=""
              RowStyles=""
              CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=7, RowSpan=1))
            -> Bonsai.Design.VisualizerWindow(Text=LoomingSize, Visible=true, Location(X=1180, Y=765), Size(Width=515, Height=215), WindowState=nil)
        #6, #10, #14, #18 -> Merge
        -> Merge
        -> WorkflowOutput
    -> Concat
    -> TakeLast(Count=1)
    -> Repeat => #9
    Disable ExternalizedMapping(Path(DisplayName=TestLEDContinuous))
    -> Disable LoadSettings(Path=Schemas\TestStim\TestLEDContinuous.yml) => #11
    Disable Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Shift", SuppressRepetitions=false) => #12
    #11, #12 -> Disable SubscribeWhen
    -> Disable MemberSelector(Selector=Trials)
    -> Disable Merge
    -> Disable CreateObservable TestLEDContinuous
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisOptoTrial

        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsContinuousStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoContinuousStimuli
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=48)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> Take(Count=1)
                -> BehaviorSubject OutputPower

                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                -> Condition => #7
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #9
                #7, #9 -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                -> Condition => #15
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #17
                #15, #17 -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #19
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                -> Condition => #23
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #25
                #23, #25 -> IntProperty(Value=1) => #26
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #27
                #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #28
                #27, #28 -> Merge => #29
                #11, #19, #29 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany StartProtocol => #5
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=2)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #13
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #18
            #13, #18 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Disable Concat
    -> Disable TakeLast(Count=1)
    -> Disable Repeat => #19
    Disable ExternalizedMapping(Path(DisplayName=TestLEDPulsed))
    -> Disable LoadSettings(Path=Schemas\TestStim\TestLEDPulsed.yml) => #21
    Disable Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 A D E Shift Control", SuppressRepetitions=false) => #22
    #21, #22 -> Disable SubscribeWhen
    -> Disable MemberSelector(Selector=Trials)
    -> Disable Merge
    -> Disable CreateObservable TestLEDPulsed
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisOptoTrial

        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsPulsedStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoPulsedStimuli
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=2)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=32)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> PropertyMapping(OutputPower)
                -> Defer SetPower => #3
                    ExternalizedMapping(Value(DisplayName=OutputPower))
                    -> IntProperty(Value=1)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> IntProperty(Value=1)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> IntProperty(Value=1)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> IntProperty(Value=1) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Frequency)
                -> PropertyMapping(Frequency) => #6
                #3, #6 -> SelectMany SetFrequency => #7
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> FloatProperty(Value=15)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> FloatProperty(Value=15)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=41, PayloadType=Float)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> FloatProperty(Value=15)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=49, PayloadType=Float)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> FloatProperty(Value=15) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=41, PayloadType=Float)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=49, PayloadType=Float)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=DutyCycle)
                -> PropertyMapping(DutyCycle) => #10
                #7, #10 -> SelectMany SetDutyCycle
                    ExternalizedMapping(Value(DisplayName=DutyCycle))
                    -> IntProperty(Value=50)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> IntProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=42, PayloadType=Float)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> IntProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=50, PayloadType=Float)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> IntProperty(Value=50) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=42, PayloadType=Float)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=50, PayloadType=Float)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                -> WorkflowOutput
            -> SelectMany StartProtocol => #5
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=2)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=33, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=33, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #13
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #18
            #13, #18 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Disable Concat
    -> Disable TakeLast(Count=1)
    -> Disable Repeat => #29
    Disable ExternalizedMapping(Path(DisplayName=TestLEDRamped))
    -> Disable LoadSettings(Path=Schemas\TestStim\TestLEDRamped.yml) => #31
    Disable Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift", SuppressRepetitions=false) => #32
    #31, #32 -> Disable SubscribeWhen
    -> Disable MemberSelector(Selector=Trials)
    -> Disable Merge
    -> Disable CreateObservable TestLEDRamped
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisOptoTrial

        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsRampedStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoRampedStimuli
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=48)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer IntensityToZero
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> Take(Count=1)
                -> BehaviorSubject OutputPower

                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #9
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #15
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #20
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #21
                #20 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #22
                #21, #22 -> Merge => #23
                #9, #15, #23 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany StartProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany RampUp => #6
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=5, RangeBegin=1, RangeEnd=8)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #5
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=1, RangeEnd=8)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation => #16
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=1, RangeEnd=20)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #17
                #16 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #18
                #17, #18 -> Merge => #19
                #5, #11, #19 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DurationSteady)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #10
            #6, #10 -> Bonsai.Shaders.Delay(DueTime=PT3S)
            -> SelectMany RampDown
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=10, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #5
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=8, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation => #16
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=1, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #17
                #16 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #18
                #17, #18 -> Merge => #19
                #5, #11, #19 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> WorkflowOutput
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #15
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5S) => #20
            #15, #20 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Disable Concat
    -> Disable TakeLast(Count=1)
    -> Disable Repeat => #39
    #9, #19, #29, #39 -> Disable Merge
    -> WorkflowOutput

Disable GroupWorkflow ExperimentVisualizer(Description="Check GPIO and Camera Image")
    SubscribeSubject Cameras => #0
    -> MemberSelector(Selector=CamA.Image)
    #0 -> MemberSelector(Selector=CamB.Image)
    #0 -> MemberSelector(Selector=CamA.GPIO)
    #0 -> MemberSelector(Selector=CamB.GPIO)

    SubscribeSubject SubscribedVideo => #5
    -> MemberSelector(Selector=CamA.GPIO)
    #5 -> MemberSelector(Selector=CamB.GPIO)

GroupWorkflow SessionTimer
    Bonsai.Shaders.UpdateFrame => #0
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PublishSubject SessionTimer
    -> WorkflowOutput

Disable GroupWorkflow Stimuli
    SubscribeSubject VisualStimuliSettings => #0
    SubscribeSubject StartExperiment => #1
    SubscribeSubject BufferVideo
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime(Selector=it)) => #4
    #1, #4 -> Delay(DueTime=PT0S) => #5
    #0, #5 -> SubscribeWhen
    -> MemberSelector(Selector=Trials)
    -> Merge
    -> CreateObservable RunVisualTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisVisualTrial

        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=ControlNoisyStimuli)
        -> Condition Exists?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable ControlNoisyStimuli => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow => #14
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT2S
              MaxRadius=25
              MonitorDistance=25
              InitialRadius=0.5
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=MaxRadius)
            -> PropertyMapping(Max) => #18
            #14, #18 -> Bonsai.Dsp.Rescale(Min=0, Max=25, RangeMin=0, RangeMax=1, RescaleType=Linear)
            -> PublishSubject Animation
            -> PropertyMapping(Contrast) => #21
            SubscribeSubject StimulusSettings
            -> PropertyMapping => #23
              Diameter(Selector=Diameter)
              OnColorR(Selector=OnColor.R)
              OnColorG(Selector=OnColor.G)
              OnColorB(Selector=OnColor.B)
              OnColorA(Selector=OnColor.A)
              OffColorR(Selector=OffColor.R)
              OffColorG(Selector=OffColor.G)
              OffColorB(Selector=OffColor.B)
              OffColorA(Selector=OffColor.A)
            #5, #21, #23 -> IncludeWorkflow => #24
              Path=Extensions\DrawCircleWithNoise.bonsai
              Diameter=25
              LocationX=0
              LocationY=0
              Layer=0
              OnColorR=1
              OnColorG=1
              OnColorB=1
              OnColorA=1
              OffColorR=0
              OffColorG=0
              OffColorB=0
              OffColorA=1
              Contrast=1
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1.5S) => #29
            #24, #29 -> SubscribeWhen => #30
            SubscribeSubject Animation
            -> Last => #32
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #36
            #32, #36 -> Bonsai.Shaders.Delay(DueTime=PT1S) => #37
            #30, #37 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=LoomingImageStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable LoomingImageStimuli => #10
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0S
              MaxRadius=25
              MonitorDistance=18
              InitialRadius=0.5
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation
            -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #16
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=TextureName)
            -> PropertyMapping(TextureName) => #19
            #5, #16, #19 -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #25
            #20, #25 -> SubscribeWhen => #26
            SubscribeSubject Animation
            -> Last => #28
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #32
            #28, #32 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #33
            #26, #33 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=MovingCircleStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable MovingCircleStimuli => #14
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Duration(Selector=Duration), RangeBegin(Selector=StartPosition.X), RangeEnd(Selector=EndPosition.X))
            -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=3, RangeBegin=0, RangeEnd=5) => #8
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Duration(Selector=Duration), RangeBegin(Selector=StartPosition.Y), RangeEnd(Selector=EndPosition.Y))
            -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=3, RangeBegin=0, RangeEnd=5) => #11
            #8, #11 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(Item1 as X, Item2 as Y)
            -> PublishSubject Animation
            -> PropertyMapping(LocationX(Selector=it.X), LocationY(Selector=it.Y)) => #15
            SubscribeSubject StimulusSettings
            -> PropertyMapping(ColorR(Selector=Color.R), ColorG(Selector=Color.G), ColorB(Selector=Color.B), ColorA(Selector=Color.A)) => #17
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Diameter(Selector=Radius)) => #19
            #5, #15, #17, #19 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=1, LocationX=5, LocationY=5, Layer=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #20
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5S) => #25
            #20, #25 -> SubscribeWhen => #26
            SubscribeSubject Animation
            -> Last => #28
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #32
            #28, #32 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #33
            #26, #33 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=LoomingCircleStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable LoomingCircleStimuli => #18
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0.5S
              MaxRadius=25
              MonitorDistance=19
              InitialRadius=1
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation
            -> PropertyMapping(Diameter) => #16
            SubscribeSubject StimulusSettings
            -> PropertyMapping(ColorR(Selector=Color.R), ColorG(Selector=Color.G), ColorB(Selector=Color.B), ColorA(Selector=Color.A)) => #18
            #5, #16, #18 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=25, LocationX=0, LocationY=0, Layer=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #19
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5M5S) => #24
            #19, #24 -> SubscribeWhen => #25
            SubscribeSubject Animation
            -> Last => #27
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #31
            #27, #31 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #32
            #25, #32 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        #6, #10, #14, #18 -> Merge
        -> Merge
        -> WorkflowOutput
    -> Concat => #10
    SubscribeSubject OptoStimuliSettings => #11
    #11, #5 -> SubscribeWhen
    -> MemberSelector(Selector=Trials)
    -> Merge
    -> CreateObservable RunOptoTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisOptoTrial

        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsContinuousStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoContinuousStimuli => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=48)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> Take(Count=1)
                -> BehaviorSubject OutputPower

                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                -> Condition => #7
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #9
                #7, #9 -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                -> Condition => #15
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #17
                #15, #17 -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #19
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                -> Condition => #23
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #25
                #23, #25 -> IntProperty(Value=3) => #26
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #27
                #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #28
                #27, #28 -> Merge => #29
                #11, #19, #29 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany StartProtocol => #5
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Bonsai.Shaders.Delay(DueTime=PT2S)
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=4)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #13
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5S) => #18
            #13, #18 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsPulsedStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoPulsedStimuli => #10
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=2)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=32)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> PropertyMapping(OutputPower)
                -> Defer SetPower => #3
                    ExternalizedMapping(Value(DisplayName=OutputPower))
                    -> IntProperty(Value=101)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> IntProperty(Value=101)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> IntProperty(Value=101)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> IntProperty(Value=101) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Frequency)
                -> PropertyMapping(Frequency) => #6
                #3, #6 -> SelectMany SetFrequency => #7
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> FloatProperty(Value=50)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> FloatProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=41, PayloadType=Float)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> FloatProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=49, PayloadType=Float)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> FloatProperty(Value=50) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=41, PayloadType=Float)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=49, PayloadType=Float)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=DutyCycle)
                -> PropertyMapping(DutyCycle) => #10
                #7, #10 -> SelectMany SetDutyCycle
                    ExternalizedMapping(Value(DisplayName=DutyCycle))
                    -> IntProperty(Value=50)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> IntProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=42, PayloadType=Float)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> IntProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=50, PayloadType=Float)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> IntProperty(Value=50) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=42, PayloadType=Float)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=50, PayloadType=Float)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                -> WorkflowOutput
            -> SelectMany StartProtocol => #5
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=33, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=4)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=33, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #13
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5M22S) => #18
            #13, #18 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsRampedStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoRampedStimuli => #14
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=48)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer IntensityToZero
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> Take(Count=1)
                -> BehaviorSubject OutputPower

                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #9
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #15
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #20
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #21
                #20 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #22
                #21, #22 -> Merge => #23
                #9, #15, #23 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany StartProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany RampUp => #6
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=5, RangeBegin=1, RangeEnd=8)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #5
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=1, RangeEnd=8)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation => #16
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=1, RangeEnd=20)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #17
                #16 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #18
                #17, #18 -> Merge => #19
                #5, #11, #19 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DurationSteady)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #10
            #6, #10 -> Bonsai.Shaders.Delay(DueTime=PT3S)
            -> SelectMany RampDown
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=10, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #5
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=8, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation => #16
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=1, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #17
                #16 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #18
                #17, #18 -> Merge => #19
                #5, #11, #19 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> WorkflowOutput
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #15
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5S) => #20
            #15, #20 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        #6, #10, #14 -> Merge
        -> Merge
        -> WorkflowOutput
    -> Concat => #16
    #10, #16 -> Merge
    -> WorkflowOutput

Disable GroupWorkflow FilesWriter
    SubscribeSubject FileName => #0
    ExternalizedMapping(Value(DisplayName=CamA, Description="Door Cam"))
    -> StringProperty(Value=CamA) => #2
    #0, #2 -> Zip => #3
    -> Format(Format={0}\{1}{2}-.avi, Selector="Item1.Item1,Item1.Item2,Item2")
    -> BehaviorSubject NameAVIa
    #3 -> Format(Format={0}\{1}{2}-.csv, Selector="Item0,Item2,Item3")
    -> BehaviorSubject NameCSVa

    SubscribeSubject FileName => #8
    ExternalizedMapping(Value(DisplayName=CamB, Description="Back Cam"))
    -> StringProperty(Value=CamB) => #10
    #8, #10 -> Zip => #11
    -> Format(Format={0}\{1}{2}-.avi, Selector="Item1.Item1,Item1.Item2,Item2")
    -> BehaviorSubject NameAVIb
    #11 -> Format(Format={0}\{1}{2}-.csv, Selector="Item1.Item1,Item1.Item2,Item2")
    -> BehaviorSubject NameCSVb

    SubscribeSubject SubscribedVideo => #16
    -> MemberSelector(Selector=CamA.Image) => #17
    SubscribeSubject NameAVIa
    -> PropertyMapping(FileName(Selector=it)) => #19
    SubscribeSubject SamplingRate
    -> PropertyMapping(FrameRate(Selector=it)) => #21
    #17, #19, #21 -> Bonsai.Vision.VideoWriter => #22
      FileName="C:\Users\User\Desktop\Matheus\VPNs_X_CS_ChS\RawData\MF-LC6_X_CS_ChS(Retinal)-1Loom_19Opto(15mWcm2)-Female-4days-FH1-CamA-.avi"
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #16 -> MemberSelector(Selector="CamA.GPIO,CamA.FrameID,CamA.Timestamp") => #23
    SubscribeSubject NameCSVa
    -> PropertyMapping(FileName) => #25
    Source2=#23, Source3=#25 -> Bonsai.IO.CsvWriter => #26
      FileName="C:\Users\User\Desktop\Matheus\VPNs_X_CS_ChS\RawData\MF-LC6_X_CS_ChS(Retinal)-1Loom_19Opto(15mWcm2)-Female-4days-FH1-CamA-.csv"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    #22, #26 -> Zip => #27
    SubscribeSubject SubscribedVideo => #28
    -> MemberSelector(Selector=CamB.Image) => #29
    SubscribeSubject NameAVIb
    -> PropertyMapping(FileName(Selector=it)) => #31
    SubscribeSubject SamplingRate
    -> PropertyMapping(FrameRate(Selector=it)) => #33
    #29, #31, #33 -> Bonsai.Vision.VideoWriter => #34
      FileName="C:\Users\User\Desktop\Matheus\VPNs_X_CS_ChS\RawData\MF-LC6_X_CS_ChS(Retinal)-1Loom_19Opto(15mWcm2)-Female-4days-FH1-CamB-.avi"
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #28 -> MemberSelector(Selector="CamB.GPIO,CamB.FrameID,CamB.Timestamp") => #35
    SubscribeSubject NameCSVb
    -> PropertyMapping(FileName) => #37
    Source2=#35, Source3=#37 -> Bonsai.IO.CsvWriter => #38
      FileName="C:\Users\User\Desktop\Matheus\VPNs_X_CS_ChS\RawData\MF-LC6_X_CS_ChS(Retinal)-1Loom_19Opto(15mWcm2)-Female-4days-FH1-CamB-.csv"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    #34, #38 -> Zip => #39
    #27, #39 -> Zip => #40
    SubscribeSubject StartExperiment => #41
    #40, #41 -> SubscribeWhen => #42
    SubscribeSubject EndExperiment => #43
    #42, #43 -> TakeUntil

Disable GroupWorkflow ExperimentRoutine
    SubscribeSubject Cameras => #0
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen
    -> PublishSubject SubscribedVideo
    -> ElementIndex => #4
    SubscribeSubject ExpDuration
    -> PropertyMapping(Count) => #6
    #4, #6 -> Take(Count=36600)
    -> Last
    -> PublishSubject EndExperiment
    -> Bonsai.Shaders.Delay(DueTime=PT1S)
    -> WorkflowOutput

    SubscribeSubject EndExperiment
    -> SelectMany "IR LEDs"
        Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT0.01S)
        -> MulticastSubject LedBoardCommands
        -> WorkflowOutput
-> Disable WorkflowOutput
