WorkflowBuilder(Version=2.9.0)
Disable ExternalizedMapping
  "⚠ LED - COM Port"
  "⚠ Cam - SerialNumber"
  "⚠ Stimulation Screen"
  "⚠ Schema - OptoStim"
  "Schema - VisualStim"
  ".Experiment Duration"
  ".Sampling Rate"
  "0. Save Folder"
  "1. Experimenter"
  "2. Genotype"
  "3. Protocol"
  "4. Sex"
  "5. Age"
  "6. FH Setup"
-> GroupWorkflow Settings
  Description:
    Experiment settings, from hardware to experimental design, and logging.
    ⚠ Params starting with ⚠ are unique to each setup.
  Workflow
    Disable ExternalizedMapping("⚠ LED - COM Port", "LED - IR Intensity")
    -> Disable GroupWorkflow LEDboardSettings
      Description:
        COM Port — Define the serial port used to communicate with the LED board.
        ⚠ Unique to each setup (check OS device list).
        ♫ If wrong, stimuli won’t trigger.

        Infrared Intensity — Set IR level (a.u. 1–120).
        🪰 100
      Workflow
        BehaviorSubject<Bonsai.Harp.HarpMessage> LedBoardCommands => #0
        ExternalizedMapping => #1
          PortName
            DisplayName="⚠ LED - COM Port"
            Description="Serial communication port used by the LED array controller.\r\n⚠ Must match the actual COM port of the LED board.\r\n♫ If wrong, the LED won’t respond.\r\n♫ Typical format: COM7"
            Category="1. Hardware Config"
        #0, #1 -> Bonsai.Harp.Device
          OperationMode=Active
          OperationLed=Off
          DumpRegisters=true
          VisualIndicators=Off
          Heartbeat=Disabled
          IgnoreErrors=false
          PortName="{{@dropdown COMn}}"
        -> PublishSubject LedBoardEvents
        -> WorkflowOutput

        ExternalizedMapping
          Value
            DisplayName="LED - IR Intensity"
            Description="Sets the infrared LED brightness in arbitrary units (1–120).\r\n🪰 100 a.u.\r\n♫ Adjust only if hardware differs; Tracking is sensitive to changes."
            Category="1. Hardware Config"
        -> IntProperty(Value=100)
        -> Bonsai.Harp.CF.LedArrayCommand(Type=WriteAuxiliaryIntensity, Mask=Index0) => #7
        BooleanProperty(Value=true)
        -> Bonsai.Harp.CF.LedArrayCommand(Type=SetAuxiliaryOutput, Mask=Index1)
        -> Delay(DueTime=PT0.01S) => #10
        #7, #10 -> Merge
        -> MulticastSubject LedBoardCommands

    Disable ExternalizedMapping("⚠ Cam - SerialNumber")
    -> GroupWorkflow CameraSettings
      Description:
        Camera Identification — Cameras (“Door” and “Back”) are bound by serial number.
        ⚠ Serial numbers are unique to each camera.
        ♫ If swapped, views will be wrong, check before recording.
      Workflow
        Disable ExternalizedMapping
          SerialNumber
            DisplayName="⚠ Cam - SerialNumber"
            Description="Unique Camera SN used to bind the camera. \r\n⚠ Must match the actual serial number of the device. \r\n♫ If wrong, Bonsai may bind the wrong camera or fail to connect. \r\n♫ Verify before recording, mis-assigned IDs will swap arenas. \r\n"
            Category="1. Hardware Config"
        -> Disable Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber="{{@dropdown Camera SN}}", ColorProcessing=Default)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            It.Image as Image,
            It.ChunkData.ExposureEndLineStatusAll as GPIO,
            It.ChunkData.FrameID as FrameID,
            It.ChunkData.Timestamp as Timestamp
            )
        -> Disable PublishSubject Cameras
        -> Disable WorkflowOutput

        Bonsai.Vision.FileCapture
          FileName="C:\Users\MF\Documents\GitHub\Bonfly\Bonfly 290 RawData\MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47.avi"
          PlaybackRate=0
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        -> PublishSubject Cameras
        -> WorkflowOutput

    ExternalizedMapping
      "⚠ Stimulation Screen"
      "Background color"
      "Monitor Refresh Rate"
      "Monitor Width"
      "Monitor Height"
      "Color Logic"
      "Square Y Position"
      "Square X Position"
      "Square Width"
      "Square Height"
    -> GroupWorkflow ScreenSettings
      Description:
        Stimulation Screen — Select the display used for visual stimuli.
        ⚠ Unique per setup (monitor ID/position).

        Photodiode Properties — Color logic, size, and position of the photodiode patch.
        ♫ Used for video-stimuli alignment; ensure it’s visible to the diode.

        Stimulation Screen Settings — Default color, size, and render frequency.
        ♫ If stimulus background RGBA = 0, this setting defines the visible background.
      Workflow
        ExternalizedMapping
          DisplayDevice
            DisplayName="⚠ Stimulation Screen"
            Description="Monitor/display used for stimulus presentation.\r\n⚠ Must match the correct display ID on each setup (e.g. First).\r\n♫ If wrong, stimuli will appear on the wrong screen."
            Category="1. Hardware Config"
          ClearColor
            DisplayName="Background color"
            Description="Default background color for the stimulus window.\r\n♫ If stimulus schema RGBA values are set to 0, the screen’s default fill color will show."
            Category="Stimulation Screen Settings"
          TargetRenderFrequency
            DisplayName="Monitor Refresh Rate"
            Description="Refresh frequency (Hz) for rendering stimuli.\r\n🪰 240 Hz\r\n⚠ Must match the physical monitor refresh rate (e.g. 240 Hz).\r\n♫ Mismatched frequencies can cause frame judder or timing inaccuracies."
            Category="Stimulation Screen Settings"
          Width
            DisplayName="Monitor Width"
            Description="Width of the stimulation window in pixels.\r\n🪰 1920 px\r\n⚠ Must match the correct display resolution.\r\n♫ Mismatched size will cause unexpected stimulus size rendering."
            Category="Stimulation Screen Settings"
          Height
            DisplayName="Monitor Height"
            Description="Height of the stimulation window in pixels.\r\n🪰 1080 px\r\n⚠ Must match the correct display resolution.\r\n♫ Mismatched size will cause unexpected stimulus size rendering."
            Category="Stimulation Screen Settings"
        -> Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=true
          ClearColor=White
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Hidden
          WindowState=Maximized
          DisplayDevice=Second
          TargetRenderFrequency=240
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> IncludeWorkflow(Path=Extensions\BonFlyResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=Extensions\BonFlyView.bonsai, Left=-27.185, Right=27.185, Bottom=-15.13, Top=15.13)
        -> PublishSubject Draw

        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.CreateOrthographicOffCenter(Left=-1, Right=1, Bottom=-1, Top=1, NearClip=-1000, FarClip=1000)
        -> Take(Count=1)
        -> AsyncSubject BackgroundView

        BooleanProperty(Value=false)
        -> BehaviorSubject SyncState

        SubscribeSubject Draw => #14
        SubscribeSubject SyncState => #15
        ExternalizedMapping => #16
          Expression
            DisplayName="Color Logic"
            Description="Defines ON/OFF color values for the photodiode square, used for video-stimulus synchronization.\r\n🪰 it ? 0 : 1\r\ni.e. when stimulus is ON, square is black, else white."
            Category="Photodiode Properties"
        #15, #16 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 0 : 1
        -> PropertyMapping(ColorR, ColorG, ColorB) => #18
        ExternalizedMapping
          Value
            DisplayName="Square Y Position"
            Description="Vertical offset of the photodiode square.\r\nNormalized -1(bottom) to 1(top) coordinates.\r\n🪰 1, i.e. top-right corner."
            Category="Photodiode Properties"
        -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it*13.9
        -> PropertyMapping(LocationY) => #22
        ExternalizedMapping
          Value
            DisplayName="Square X Position"
            Description="Horizontal offset of the photodiode square.\r\nNormalized -1(left) to 1(right) coordinates.\r\n🪰 1; i.e. top-right corner."
            Category="Photodiode Properties"
        -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it*26
        -> PropertyMapping(LocationX) => #26
        ExternalizedMapping => #27
          ExtentX
            DisplayName="Square Width"
            Description="Width of the photodiode square.\r\n🪰 2\r\n♫ Should be large enough for reliable diode detection but small enough not to occupy too much the monitor."
            Category="Photodiode Properties"
          ExtentY
            DisplayName="Square Height"
            Description="Width of the photodiode square.\r\n🪰 2\r\n♫ Should be large enough for reliable diode detection but small enough not to occupy too much the monitor."
            Category="Photodiode Properties"
        #14, #18, #22, #26, #27 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=2
          ExtentY=2
          LocationX=26
          LocationY=13.9
          Layer=0
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1

    ExternalizedMapping("⚠ Schema - OptoStim", "Schema - VisualStim", ".Experiment Duration", ".Sampling Rate", .BufferVideo)
    -> GroupWorkflow ExperimentSettings
      Description:
        Experimental Parameters — Stimulus schema, total duration, and sampling rate.
        ⚠ OptoSchema is unique to each setup.
        ⚠ SamplingRate = expected camera FPS; doesn't affect camera config.
      Workflow
        ExternalizedMapping
          Value
            DisplayName=.BufferVideo
            Description="Adds time, in seconds, both at the start and end of the experiment duration.\r\n🪰 5 sec\r\n♫ Recording time = ExperimentDuration * SamplingRate + (BufferVideo * 2)"
            Category="2. Experiment Design"
        -> IntProperty(Value=5)
        -> Take(Count=1)
        -> BehaviorSubject BufferVideo

        ExternalizedMapping
          Path
            DisplayName="⚠ Schema - OptoStim"
            Description="Schema design for optogenetic stimulation.\r\n⚠ If not used in experiment, select: Schemas\Repo\NoStimulus.yml\r\n⚠ Unique to each setup; Intensity values vary.\r\n♫ Check Schemas\Repo folder for commonly used protocols.\r\n♫ Check Schemas\Examples\ExampleOptoStim.yml for example and tutorial stimulus design."
            Category="2. Experiment Design"
        -> LoadSettings(Path=Schemas\Repo\NoStimulus.yml)
        -> AsyncSubject OptoStimuliSettings

        ExternalizedMapping
          Path
            DisplayName="Schema - VisualStim"
            Description="Schema for visual stimulus presentation.\r\n⚠ If not used in experiment, select: Schemas\Repo\NoStimulus.yml\r\n♫ Shared across setups, but version mismatches can break reproducibility.\r\n♫ Check Schemas\Repo folder for commonly used protocols.\r\n♫ Check Schemas\Examples\ExampleVisualStim.yml for example and tutorial stimulus design."
            Category="2. Experiment Design"
        -> LoadSettings(Path=Schemas\Repo\20Looms_25cm-s.yml)
        -> AsyncSubject VisualStimuliSettings

        ExternalizedMapping
          Value
            DisplayName=".Experiment Duration"
            Description="Total duration of the experiment (seconds).\r\n♫ Recording time = ExperimentDuration * SamplingRate + (BufferVideo * 2)"
            Category="2. Experiment Design"
        -> IntProperty(Value=600) => #11
        SubscribeSubject BufferVideo
        -> Multiply(Operand=IntProperty(Value=2))
        -> PropertyMapping(Value) => #14
        #11, #14 -> Add(Operand=IntProperty(Value=10)) => #15
        ExternalizedMapping
          Value
            DisplayName=".Sampling Rate"
            Description="Expected camera acquisition frame rate (Hz). Used for experiment duration, and logging frame rate.\r\n🪰 60 Hz.\r\n⚠ Must match the actual camera FPS; Doesn’t change camera config.\r\n♫ Recording time = ExperimentDuration * SamplingRate + (BufferVideo * 2)"
            Category="2. Experiment Design"
        -> IntProperty(Value=60)
        -> BehaviorSubject SamplingRate => #18
        #15, #18 -> Zip
        -> Multiply
        -> BehaviorSubject ExpDuration

    ExternalizedMapping("0. Save Folder", "1. Experimenter", "2. Genotype", "3. Protocol", "4. Sex", "5. Age", "6. FH Setup")
    -> GroupWorkflow FilenameSettings
      Description:
        Standard Filename Structure — Defines save path and naming pattern.
        ...\ExperimentFolder\RawData\[Experimenter]-[Genotype]-[Protocol]-[Sex]-[Age]-[Setup]-[Camera]-[Timestamp]
        ♫ Include experimenter ID, fly parameters, protocol used, camera tags, and timestamp for traceability.
      Workflow
        ExternalizedMapping
          Value
            DisplayName="0. Save Folder"
            Description="Directory path where experiment data will be stored.\r\n🪰 ...\ExpFolder\RawData"
            Category="3. Filename Generator"
        -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value="{{@navigate RawData folder}}")
        -> Take(Count=1)
        -> AsyncSubject RootPath => #3
        ExternalizedMapping
          Value
            DisplayName="1. Experimenter"
            Description="Identifier for the person running the experiment.\r\n🪰 Initials (e.g. JDS)"
            Category="3. Filename Generator"
        -> StringProperty(Value=EI) => #5
        ExternalizedMapping
          Value
            DisplayName="2. Genotype"
            Description="Fly line or genotype identifier.\r\n♫ Essential for grouping and downstream analysis."
            Category="3. Filename Generator"
        -> StringProperty(Value=GENOTYPE) => #7
        ExternalizedMapping
          Value
            DisplayName="3. Protocol"
            Description="Protocol identifier of the stimulation schema used.\r\n♫ Essential for grouping and downstream analysis."
            Category="3. Filename Generator"
        -> StringProperty(Value=PROTOCOL) => #9
        ExternalizedMapping(Value(DisplayName="4. Sex", Description="Sex of the experimental subject(s).\r\n🪰 Male, Female", Category="3. Filename Generator"))
        -> StringProperty(Value=SEX) => #11
        ExternalizedMapping
          Value
            DisplayName="5. Age"
            Description="Age of flies at the time of experiment (days post-eclosion).\r\n🪰 3days; 2to6days"
            Category="3. Filename Generator"
        -> StringProperty(Value=XtoYdays) => #13
        ExternalizedMapping(Value(DisplayName="6. FH Setup", Description="Identifier for the specific FlyHigher setup used.\r\n🪰 FH0", Category="3. Filename Generator"))
        -> StringProperty(Value=FHn) => #15
        #5, #7, #9, #11, #13, #15 -> Zip
        -> Format(Format={0}-{1}-{2}-{3}-{4}-{5}-, Selector="Item1,Item2,Item3,Item4,Item5,Item6")
        -> Take(Count=1) => #18
        #3, #18 -> Zip
        -> BehaviorSubject FileName

GroupWorkflow TestStimuli
  Description:
    ⚠ Don't stare to high intensity LEDs, will burn your retina!
    VisualStimulus = Shift + V
    LEDContinuous = Shift + C
    LEDPulsed = Shift + P
    LEDRamped = Shift + R
  Workflow
    ExternalizedMapping(Path(DisplayName=TestVisualStim, Description="Shift + V\r\nExpects: Schemas\TestStim\TestVisualStim.yml"))
    -> LoadSettings(Path=Schemas\TestStim\TestVisualStim.yml) => #1
    Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Shift", SuppressRepetitions=false) => #2
    #1, #2 -> SubscribeWhen
    -> MemberSelector(Selector=Trials)
    -> Merge
    -> CreateObservable TestVisualStim
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisVisualTrial

        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=ControlNoisyStimuli)
        -> Condition Exists?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable ControlNoisyStimuli => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow => #14
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0.5S
              MaxRadius=25
              MonitorDistance=18.5
              InitialRadius=1
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=MaxRadius)
            -> PropertyMapping(Max) => #18
            #14, #18 -> Bonsai.Dsp.Rescale(Min=0, Max=25, RangeMin=0, RangeMax=1, RescaleType=Linear)
            -> PublishSubject Animation
            -> PropertyMapping(Contrast) => #21
            SubscribeSubject StimulusSettings
            -> PropertyMapping => #23
              Diameter(Selector=Diameter)
              OnColorR(Selector=OnColor.R)
              OnColorG(Selector=OnColor.G)
              OnColorB(Selector=OnColor.B)
              OnColorA(Selector=OnColor.A)
              OffColorR(Selector=OffColor.R)
              OffColorG(Selector=OffColor.G)
              OffColorB(Selector=OffColor.B)
              OffColorA(Selector=OffColor.A)
            #5, #21, #23 -> IncludeWorkflow => #24
              Path=Extensions\DrawCircleWithNoise.bonsai
              Diameter=25
              LocationX=0
              LocationY=0
              Layer=0
              OnColorR=0
              OnColorG=0
              OnColorB=0
              OnColorA=1
              OffColorR=0
              OffColorG=0
              OffColorB=0
              OffColorA=0
              Contrast=0.0683077
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #29
            #24, #29 -> SubscribeWhen => #30
            SubscribeSubject Animation
            -> Last => #32
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #36
            #32, #36 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #37
            #30, #37 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=LoomingImageStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable LoomingImageStimuli => #10
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0S
              MaxRadius=25
              MonitorDistance=18
              InitialRadius=0.5
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation
            -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #16
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=TextureName)
            -> PropertyMapping(TextureName) => #19
            #5, #16, #19 -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #25
            #20, #25 -> SubscribeWhen => #26
            SubscribeSubject Animation
            -> Last => #28
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #32
            #28, #32 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #33
            #26, #33 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=MovingCircleStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable MovingCircleStimuli => #14
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Duration(Selector=Duration), RangeBegin(Selector=StartPosition.X), RangeEnd(Selector=EndPosition.X))
            -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=0, RangeEnd=0) => #8
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Duration(Selector=Duration), RangeBegin(Selector=StartPosition.Y), RangeEnd(Selector=EndPosition.Y))
            -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=-15, RangeEnd=15) => #11
            #8, #11 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(Item1 as X, Item2 as Y)
            -> PublishSubject Animation
            -> PropertyMapping(LocationX(Selector=it.X), LocationY(Selector=it.Y)) => #15
            SubscribeSubject StimulusSettings
            -> PropertyMapping(ColorR(Selector=Color.R), ColorG(Selector=Color.G), ColorB(Selector=Color.B), ColorA(Selector=Color.A)) => #17
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Diameter(Selector=Radius)) => #19
            #5, #15, #17, #19 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=3.5, LocationX=0, LocationY=15, Layer=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #20
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #25
            #20, #25 -> SubscribeWhen => #26
            SubscribeSubject Animation
            -> Last => #28
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #32
            #28, #32 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #33
            #26, #33 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=LoomingCircleStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable LoomingCircleStimuli => #18
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0.5S
              MaxRadius=25
              MonitorDistance=18.5
              InitialRadius=1
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation
            -> PropertyMapping(Diameter) => #16
            SubscribeSubject StimulusSettings
            -> PropertyMapping(ColorR(Selector=Color.R), ColorG(Selector=Color.G), ColorB(Selector=Color.B), ColorA(Selector=Color.A)) => #18
            #5, #16, #18 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=25, LocationX=0, LocationY=0, Layer=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #19
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #24
            #19, #24 -> SubscribeWhen => #25
            SubscribeSubject Animation
            -> Last => #27
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #31
            #27, #31 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #32
            #25, #32 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput

            SubscribeSubject Animation => #38
            -> BufferCount(Count=10, Skip=10)
            -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=13)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #42
            #38 -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #43
            #42, #43 -> Bonsai.Gui.TableLayoutPanelBuilder
              Enabled=true
              Visible=true
              ColumnCount=8
              RowCount=1
              ColumnStyles=""
              RowStyles=""
              CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=7, RowSpan=1))
            -> Bonsai.Design.VisualizerWindow(Text=TestLooming, Visible=true, Location(X=1280, Y=805), Size(Width=600, Height=225), WindowState=Normal)
        #6, #10, #14, #18 -> Merge
        -> Merge
        -> WorkflowOutput
    -> Concat
    -> TakeLast(Count=1)
    -> Repeat
    -> WorkflowOutput

    Disable ExternalizedMapping(Path(DisplayName=TestLEDContinuous, Description="Shift + C\r\nExpects: Schemas\TestStim\TestLEDContinuous.yml\r\n"))
    -> Disable LoadSettings(Path=Schemas\TestStim\TestLEDContinuous.yml) => #12
    Disable Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Shift", SuppressRepetitions=false) => #13
    #12, #13 -> Disable SubscribeWhen
    -> Disable MemberSelector(Selector=Trials)
    -> Disable Merge
    -> Disable CreateObservable TestLEDContinuous
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisOptoTrial

        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsContinuousStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoContinuousStimuli
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=48)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> Take(Count=1)
                -> BehaviorSubject OutputPower

                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                -> Condition => #7
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #9
                #7, #9 -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                -> Condition => #15
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #17
                #15, #17 -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #19
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                -> Condition => #23
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #25
                #23, #25 -> IntProperty(Value=1) => #26
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #27
                #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #28
                #27, #28 -> Merge => #29
                #11, #19, #29 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany StartProtocol => #5
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=2)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #13
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #18
            #13, #18 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Disable Concat
    -> Disable TakeLast(Count=1)
    -> Disable Repeat => #20
    Disable ExternalizedMapping(Path(DisplayName=TestLEDPulsed, Description="Shift + P\r\nExpects: Schemas\TestStim\TestLEDPulsed.yml\r\n"))
    -> Disable LoadSettings(Path=Schemas\TestStim\TestLEDPulsed.yml) => #22
    Disable Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Shift", SuppressRepetitions=false) => #23
    #22, #23 -> Disable SubscribeWhen
    -> Disable MemberSelector(Selector=Trials)
    -> Disable Merge
    -> Disable CreateObservable TestLEDPulsed
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisOptoTrial

        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsPulsedStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoPulsedStimuli
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=2)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=32)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> PropertyMapping(OutputPower)
                -> Defer SetPower => #3
                    ExternalizedMapping(Value(DisplayName=OutputPower))
                    -> IntProperty(Value=1)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> IntProperty(Value=1)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> IntProperty(Value=1)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> IntProperty(Value=1) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Frequency)
                -> PropertyMapping(Frequency) => #6
                #3, #6 -> SelectMany SetFrequency => #7
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> FloatProperty(Value=15)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> FloatProperty(Value=15)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=41, PayloadType=Float)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> FloatProperty(Value=15)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=49, PayloadType=Float)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> FloatProperty(Value=15) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=41, PayloadType=Float)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=49, PayloadType=Float)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=DutyCycle)
                -> PropertyMapping(DutyCycle) => #10
                #7, #10 -> SelectMany SetDutyCycle
                    ExternalizedMapping(Value(DisplayName=DutyCycle))
                    -> IntProperty(Value=50)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> IntProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=42, PayloadType=Float)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> IntProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=50, PayloadType=Float)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> IntProperty(Value=50) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=42, PayloadType=Float)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=50, PayloadType=Float)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                -> WorkflowOutput
            -> SelectMany StartProtocol => #5
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=2)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=33, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=33, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #13
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #18
            #13, #18 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Disable Concat
    -> Disable TakeLast(Count=1)
    -> Disable Repeat => #30
    Disable ExternalizedMapping(Path(DisplayName=TestLEDRamped, Description="Shift + R\r\nExpects: Schemas\TestStim\TestLEDRamped.yml"))
    -> Disable LoadSettings(Path=Schemas\TestStim\TestLEDRamped.yml) => #32
    Disable Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift", SuppressRepetitions=false) => #33
    #32, #33 -> Disable SubscribeWhen
    -> Disable MemberSelector(Selector=Trials)
    -> Disable Merge
    -> Disable CreateObservable TestLEDRamped
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisOptoTrial

        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsRampedStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoRampedStimuli
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=48)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer IntensityToZero
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> Take(Count=1)
                -> BehaviorSubject OutputPower

                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #9
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #15
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #20
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #21
                #20 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #22
                #21, #22 -> Merge => #23
                #9, #15, #23 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany StartProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=2)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany RampUp => #6
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=1, RangeEnd=10)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #5
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=1, RangeEnd=3)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation => #16
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=1, RangeEnd=5)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #17
                #16 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #18
                #17, #18 -> Merge => #19
                #5, #11, #19 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DurationSteady)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #10
            #6, #10 -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> SelectMany RampDown
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=10, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #5
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=3, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation => #16
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=5, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #17
                #16 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #18
                #17, #18 -> Merge => #19
                #5, #11, #19 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> WorkflowOutput
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #15
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #20
            #15, #20 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Disable Concat
    -> Disable TakeLast(Count=1)
    -> Disable Repeat => #40
    #20, #30, #40 -> Disable Merge

GroupWorkflow Visualizer(Description="Useful experiment nodes visualization")
    GroupWorkflow SessionTimer
        Bonsai.Shaders.UpdateFrame => #0
        SubscribeSubject StartExperiment => #1
        #0, #1 -> SubscribeWhen
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #1
    SubscribeSubject FileName
    -> MemberSelector(Selector=Item2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #4
    #1, #4 -> Bonsai.Gui.TableLayoutPanelBuilder ExperimentVisualizer
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 15pt"
      ColumnCount=12
      RowCount=1
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=2, RowSpan=1), CellSpan(ColumnSpan=10, RowSpan=1))
    -> Bonsai.Design.VisualizerWindow(Text=ExperimentSession, Visible=true, Location(X=0, Y=80), Size(Width=1285, Height=85), WindowState=Normal)

    SubscribeSubject Cameras
    -> Bonsai.Design.VisualizerWindow(Text="Cam - Image", Visible=true, Location(X=0, Y=160), Size(Width=650, Height=650), WindowState=Normal)

    Disable SubscribeSubject SubscribedVideo
    -> Disable MemberSelector(Selector=GPIO)
    -> Disable Bonsai.Design.VisualizerWindow(Text="Signal - GPIO", Visible=true, Location(X=0, Y=805), Size(Width=650, Height=225), WindowState=Normal)

    SubscribeSubject Cameras
    -> Bonsai.Vision.Grayscale => #13
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=80, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
    -> Bonsai.Dsp.CountNonZero => #18
    -> BufferCount(Count=1, Skip=20)
    -> Index(Operand=IntProperty(Value=0))
    -> Bonsai.Design.VisualizerWindow(Text="Signal - GPIO", Visible=true, Location(X=0, Y=805), Size(Width=650, Height=225), WindowState=Normal)
    #13 -> ElementIndex
    #18 -> WindowCount(Count=10, Skip=60)
    -> Bonsai.Design.VisualizerWindow(Text="Signal - GPIO2", Visible=true, Location(X=0, Y=805), Size(Width=650, Height=225), WindowState=Normal)

Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=true)
-> PublishSubject StartExperiment

GroupWorkflow Stimuli(Description="Stimuli triggers")
    SubscribeSubject VisualStimuliSettings => #0
    GroupWorkflow BufferDelayOnset => #1
        SubscribeSubject BufferVideo
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT5S)
        -> WorkflowOutput
    SubscribeSubject StartExperiment => #2
    #1, #2 -> SubscribeWhen => #3
    #0, #3 -> SubscribeWhen
    -> MemberSelector(Selector=Trials)
    -> Merge
    -> CreateObservable RunVisualTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisVisualTrial

        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=ControlNoisyStimuli)
        -> Condition Exists?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable ControlNoisyStimuli => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0.5S
              MaxRadius=25
              MonitorDistance=18.5
              InitialRadius=1
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation => #15
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=MaxRadius)
            -> PropertyMapping(Max) => #19
            #15, #19 -> Bonsai.Dsp.Rescale(Min=0, Max=25, RangeMin=0, RangeMax=1, RescaleType=Linear)
            -> PropertyMapping(Contrast) => #21
            SubscribeSubject StimulusSettings
            -> PropertyMapping => #23
              Diameter(Selector=Diameter)
              OnColorR(Selector=OnColor.R)
              OnColorG(Selector=OnColor.G)
              OnColorB(Selector=OnColor.B)
              OnColorA(Selector=OnColor.A)
              OffColorR(Selector=OffColor.R)
              OffColorG(Selector=OffColor.G)
              OffColorB(Selector=OffColor.B)
              OffColorA(Selector=OffColor.A)
            #5, #21, #23 -> IncludeWorkflow => #24
              Path=Extensions\DrawCircleWithNoise.bonsai
              Diameter=25
              LocationX=0
              LocationY=0
              Layer=0
              OnColorR=0
              OnColorG=0
              OnColorB=0
              OnColorA=1
              OffColorR=0
              OffColorG=0
              OffColorB=0
              OffColorA=0
              Contrast=1
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #29
            #24, #29 -> SubscribeWhen => #30
            SubscribeSubject Animation
            -> Last => #32
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #36
            #32, #36 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #37
            #30, #37 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput

            Disable SubscribeSubject Animation
            -> Disable BufferCount(Count=1, Skip=4)
            -> Disable Index(Operand=IntProperty(Value=0))
            -> Disable Bonsai.Design.VisualizerWindow(Text=ControlStimuli, Visible=true, Location(X=0, Y=805), Size(Width=1285, Height=225), WindowState=Normal)
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=LoomingImageStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable LoomingImageStimuli => #10
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0S
              MaxRadius=25
              MonitorDistance=18
              InitialRadius=0.5
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation
            -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #16
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=TextureName)
            -> PropertyMapping(TextureName) => #19
            #5, #16, #19 -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #25
            #20, #25 -> SubscribeWhen => #26
            SubscribeSubject Animation
            -> Last => #28
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #32
            #28, #32 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #33
            #26, #33 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=MovingCircleStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable MovingCircleStimuli => #14
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Duration(Selector=Duration), RangeBegin(Selector=StartPosition.X), RangeEnd(Selector=EndPosition.X))
            -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=3, RangeBegin=0, RangeEnd=5) => #8
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Duration(Selector=Duration), RangeBegin(Selector=StartPosition.Y), RangeEnd(Selector=EndPosition.Y))
            -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=3, RangeBegin=0, RangeEnd=5) => #11
            #8, #11 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(Item1 as X, Item2 as Y)
            -> PublishSubject Animation
            -> PropertyMapping(LocationX(Selector=it.X), LocationY(Selector=it.Y)) => #15
            SubscribeSubject StimulusSettings
            -> PropertyMapping(ColorR(Selector=Color.R), ColorG(Selector=Color.G), ColorB(Selector=Color.B), ColorA(Selector=Color.A)) => #17
            SubscribeSubject StimulusSettings
            -> PropertyMapping(Diameter(Selector=Radius)) => #19
            #5, #15, #17, #19 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=1, LocationX=5, LocationY=5, Layer=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #20
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5S) => #25
            #20, #25 -> SubscribeWhen => #26
            SubscribeSubject Animation
            -> Last => #28
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #32
            #28, #32 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #33
            #26, #33 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisVisualTrial
        -> MemberSelector(Selector=LoomingCircleStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable LoomingCircleStimuli => #18
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StimulusSettings

            IncludeWorkflow(Path=Extensions\DrawBackground.bonsai)

            SubscribeSubject Draw
            -> IncludeWorkflow(Path=Extensions\TurnSyncOn.bonsai) => #5
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> PropertyMapping => #8
              MaxRadius(Selector=MaxRadius)
              MonitorDistance(Selector=MonitorDistance)
              InitialRadius(Selector=InitialRadius)
              InitialVirtualDistance(Selector=InitialVirtualDistance)
              LinearApproachingVelocity(Selector=LinearApproachingVelocity)
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=AnimationSettings)
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Duration) => #13
            #8, #13 -> IncludeWorkflow
              Path=Extensions\LoomRangeAnimation.bonsai
              Duration=PT0.5S
              MaxRadius=25
              MonitorDistance=18.5
              InitialRadius=1
              InitialVirtualDistance=12.5
              LinearApproachingVelocity=25
            -> PublishSubject Animation
            -> PropertyMapping(Diameter) => #16
            SubscribeSubject StimulusSettings
            -> PropertyMapping(ColorR(Selector=Color.R), ColorG(Selector=Color.G), ColorB(Selector=Color.B), ColorA(Selector=Color.A)) => #18
            #5, #16, #18 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=25, LocationX=0, LocationY=0, Layer=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #19
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5M) => #24
            #19, #24 -> SubscribeWhen => #25
            SubscribeSubject Animation
            -> Last => #27
            SubscribeSubject StimulusSettings
            -> MemberSelector(Selector=DelayOffset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it)) => #31
            #27, #31 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #32
            #25, #32 -> TakeUntil
            -> LastOrDefault
            -> IncludeWorkflow(Path=Extensions\TurnSyncOff.bonsai)
            -> Unit
            -> WorkflowOutput

            SubscribeSubject Animation
            -> BufferCount(Count=1, Skip=4)
            -> Index(Operand=IntProperty(Value=0))
            -> Bonsai.Design.VisualizerWindow(Text=LoomingStimuli, Visible=true, Location(X=0, Y=805), Size(Width=1285, Height=225), WindowState=Normal)
        #6, #10, #14, #18 -> Merge
        -> Merge
        -> WorkflowOutput
    -> Concat => #8
    SubscribeSubject OptoStimuliSettings => #9
    #9, #3 -> Disable SubscribeWhen
    -> Disable MemberSelector(Selector=Trials)
    -> Disable Merge
    -> Disable CreateObservable RunOptoTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisOptoTrial

        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsContinuousStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoContinuousStimuli => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=48)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> Take(Count=1)
                -> BehaviorSubject OutputPower

                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                -> Condition => #7
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #9
                #7, #9 -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                -> Condition => #15
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #17
                #15, #17 -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #19
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                -> Condition => #23
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject OutputPower
                -> PropertyMapping(Value) => #25
                #23, #25 -> IntProperty(Value=3) => #26
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #27
                #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #28
                #27, #28 -> Merge => #29
                #11, #19, #29 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany StartProtocol => #5
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Bonsai.Shaders.Delay(DueTime=PT2S)
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=4)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsContinuousStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #13
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5S) => #18
            #13, #18 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsPulsedStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoPulsedStimuli => #10
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=2)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=32)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> PropertyMapping(OutputPower)
                -> Defer SetPower => #3
                    ExternalizedMapping(Value(DisplayName=OutputPower))
                    -> IntProperty(Value=101)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> IntProperty(Value=101)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> IntProperty(Value=101)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> IntProperty(Value=101) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Frequency)
                -> PropertyMapping(Frequency) => #6
                #3, #6 -> SelectMany SetFrequency => #7
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> FloatProperty(Value=50)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> FloatProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=41, PayloadType=Float)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> FloatProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=49, PayloadType=Float)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> FloatProperty(Value=50) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=41, PayloadType=Float)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=49, PayloadType=Float)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=DutyCycle)
                -> PropertyMapping(DutyCycle) => #10
                #7, #10 -> SelectMany SetDutyCycle
                    ExternalizedMapping(Value(DisplayName=DutyCycle))
                    -> IntProperty(Value=50)
                    -> Take(Count=1)
                    -> AsyncSubject OutputPower

                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition => #7
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #9
                    #7, #9 -> IntProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=42, PayloadType=Float)) => #11
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition => #15
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #17
                    #15, #17 -> IntProperty(Value=50)
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=50, PayloadType=Float)) => #19
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget)
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition => #23
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject OutputPower
                    -> PropertyMapping(Value) => #25
                    #23, #25 -> IntProperty(Value=50) => #26
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=42, PayloadType=Float)) => #27
                    #26 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=50, PayloadType=Float)) => #28
                    #27, #28 -> Merge => #29
                    #11, #19, #29 -> Merge
                    -> MulticastSubject LedBoardCommands
                    -> Last
                    -> WorkflowOutput
                -> WorkflowOutput
            -> SelectMany StartProtocol => #5
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=33, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=4)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=33, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsPulsedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #13
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5M22S) => #18
            #13, #18 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        SubscribeSubject ThisOptoTrial
        -> MemberSelector(Selector=OptogeneticsRampedStimuli)
        -> Condition IsNotNull
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> CreateObservable OptoRampedStimuli => #14
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSettings

            GroupWorkflow EnablePower
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=3)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8)) => #3
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #8
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=48)) => #13
                #8, #13 -> Merge => #14
                #3, #14 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput

            Defer IntensityToZero
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=Amplitude)
                -> Take(Count=1)
                -> BehaviorSubject OutputPower

                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #9
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #15
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #20
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #21
                #20 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #22
                #21, #22 -> Merge => #23
                #9, #15, #23 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany StartProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> PropertyMapping(Value)
                -> IntProperty(Value=1)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany RampUp => #6
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=5, RangeBegin=1, RangeEnd=8)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #5
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=1, RangeEnd=8)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation => #16
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeEnd) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=1, RangeEnd=20)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #17
                #16 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #18
                #17, #18 -> Merge => #19
                #5, #11, #19 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> WorkflowOutput
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DurationSteady)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #10
            #6, #10 -> Bonsai.Shaders.Delay(DueTime=PT3S)
            -> SelectMany RampDown
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=10, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #5
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1, RangeBegin=8, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #11
                SubscribeSubject TrialSettings
                -> MemberSelector(Selector=LedTarget)
                -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany RampCalculation => #16
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=DurationRamp)
                    -> Take(Count=1)
                    -> PropertyMapping(Duration) => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=Amplitude)
                    -> Take(Count=1)
                    -> PropertyMapping(RangeBegin) => #7
                    #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.5, RangeBegin=1, RangeEnd=1)
                    -> WorkflowOutput
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=39, PayloadType=U8)) => #17
                #16 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=40, PayloadType=U8)) => #18
                #17, #18 -> Merge => #19
                #5, #11, #19 -> Merge
                -> MulticastSubject LedBoardCommands
                -> Last
                -> WorkflowOutput
            -> SelectMany EndProtocol
                GroupWorkflow REG_POWER_EN
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #4
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=1) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=2) => #10
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IntProperty(Value=3) => #13
                    #4, #7, #10, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> LeftShift(Value=2)
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=34, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DisablePower
                Disable Annotation TurnAuxOff(Text="")
                -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
                -> Disable MulticastSubject LedBoardCommands => #2
                GroupWorkflow REG_POWER_EN => #3
                    SubscribeSubject TrialSettings
                    -> MemberSelector(Selector=LedTarget) => #1
                    -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=None))
                    -> IntProperty(Value=0) => #3
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led0))
                    -> IntProperty(Value=1) => #5
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Led1))
                    -> IntProperty(Value=2) => #7
                    #1 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.OptogeneticsRampedStimuliLedTarget>(Value=Both))
                    -> IntProperty(Value=3) => #9
                    #3, #5, #7, #9 -> Merge
                    -> Disable Take(Count=1)
                    -> WorkflowOutput
                Annotation "<< 2"(Text=https://github.com/harp-tech/device.ledarray/blob/main/Firmware/LedArray/app_ios_and_regs.h) => #4
                #3, #4 -> LeftShift(Value=2)
                -> PropertyMapping(Value) => #6
                #2, #6 -> IntProperty(Value=12)
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=32, PayloadType=U8))
                -> MulticastSubject LedBoardCommands
                -> WorkflowOutput
            -> Take(Count=1) => #15
            SubscribeSubject TrialSettings
            -> MemberSelector(Selector=DelayOnset)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime(Selector=it))
            -> Bonsai.Shaders.Timer(DueTime=PT5S) => #20
            #15, #20 -> SubscribeWhen
            -> Unit
            -> WorkflowOutput
        #6, #10, #14 -> Merge
        -> Merge
        -> WorkflowOutput
    -> Disable Concat => #14
    #8, #14 -> Disable Merge
    -> Disable WorkflowOutput

Disable GroupWorkflow FilesWriter(Description="Save experiment .avi and .csv files for each camera.\n\n\n")
    SubscribeSubject SubscribedVideo => #0
    -> MemberSelector(Selector=Image) => #1
    SubscribeSubject FileName
    -> Format(Format={0}\{1}-.avi, Selector="Item1,Item2")
    -> PropertyMapping(FileName(Selector=it)) => #4
    SubscribeSubject SamplingRate
    -> PropertyMapping(FrameRate(Selector=it)) => #6
    #1, #4, #6 -> Bonsai.Vision.VideoWriter => #7
      FileName="C:\Users\User\Desktop\Matheus\Personal-Bonfly_ToTest\RawData TEST\EI-GENO-PROTOCOL-SEX-XtoYdays-FHn-CamA-.avi"
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #0 -> MemberSelector(Selector="GPIO,FrameID,Timestamp")
    -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #9
      Expression:
        new(
        Item1 as GPIO,
        Item2 as FrameID,
        Item3 as Timestamp
        )
    SubscribeSubject FileName
    -> Format(Format={0}\{1}-.csv, Selector="Item1,Item2")
    -> PropertyMapping(FileName) => #12
    Source2=#9, Source3=#12 -> Bonsai.IO.CsvWriter => #13
      FileName="C:\Users\User\Desktop\Matheus\Personal-Bonfly_ToTest\RawData TEST\EI-GENO-PROTOCOL-SEX-XtoYdays-FHn-CamA-.csv"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    #7, #13 -> Zip => #14
    SubscribeSubject StartExperiment => #15
    #14, #15 -> SubscribeWhen => #16
    SubscribeSubject EndExperiment => #17
    #16, #17 -> TakeUntil

GroupWorkflow ExperimentRoutine(Description="Experiment start and end routine")
    SubscribeSubject Cameras => #0
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen
    -> PublishSubject SubscribedVideo
    -> ElementIndex => #4
    SubscribeSubject ExpDuration
    -> PropertyMapping(Count) => #6
    #4, #6 -> Take(Count=36600)
    -> Last
    -> PublishSubject EndExperiment
    -> Bonsai.Shaders.Delay(DueTime=PT1S)
    -> WorkflowOutput

    Disable SubscribeSubject EndExperiment
    -> Disable SelectMany "IR LEDs"(Description="Turn OFF IR LEDs at the end of the experiment")
        Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=61, PayloadType=U8, Value=8))
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT0.01S)
        -> MulticastSubject LedBoardCommands
        -> WorkflowOutput
-> WorkflowOutput

Annotation README
  Text:
    # FlyHigher
    ## Protocol

    Click on parameters for detailed descriptions.

    🪰 Standard values
    ♫ Notes
    ⚠ Warnings

    ---

    ### Before experiment
    1. Set experiment parameters (click on **Settings** for extended parameters)
    2. Start Bonsai (**Start / F5**)
    3. Check camera binding (**Door**, **Back**)
    4. Test the stimulus type to be used
       ♫ Ensure it renders properly **and** is read on GPIO

    ---

    ### ⚠ Warnings
    - Do **not** click on anything while the experiment is running → causes a screen flicker that mimics a lights-off stimulus
    - Always start by **testing your stimuli** → this sets LED parameters and ensures the photodiode is aligned
    - LED intensity varies across setups → **never** reuse the same Opto schema across setups
    - Do not include empty arenas when running <4 flies → delete videos with 0 arenas after the run

    ---


    __( · )<&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;**Start experiment:**
    \\ _ )&nbsp;&nbsp;)&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;**→ press *Space* to begin.**

    ---
