WorkflowBuilder(Version=2.9.0)
ExternalizedMapping("1. Path"(DisplayName=ExperimentalFolder, Category="0. Load Path"))
-> GroupWorkflow GetPath
    ExternalizedMapping(Value(DisplayName="1. Path"))
    -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value="C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP")
    -> Add(Operand=StringProperty(Value=\RawData))
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path="C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\RawData", SearchPattern=*.avi, SearchOption=TopDirectoryOnly)
    -> Concat
    -> SelectMany BonflyPaths
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform GetDirectory
          Script:
            from System.IO import Path

            @returns(str)
            def process(value):
              output = Path.GetDirectoryName(value)
              return output
        -> Take(Count=1)
        -> AsyncSubject RawDataPath
        #0 -> AsyncSubject VideoPath
        #0 -> Bonsai.Scripting.Expressions.ExpressionTransform Avi2Csv
          Expression: it.Replace(".avi", ".csv")
        -> AsyncSubject CsvPath

        SubscribeSubject RawDataPath
        -> Bonsai.Scripting.IronPython.PythonTransform GetDirectory
          Script:
            from System.IO import Path

            @returns(str)
            def process(value):
              output = Path.GetDirectoryName(value)
              return output
        -> Take(Count=1)
        -> Add(Operand=StringProperty(Value=\PostProcessing))
        -> AsyncSubject PostProcessingPath

        SubscribeSubject RawDataPath => #12
        SubscribeSubject PostProcessingPath => #13
        SubscribeSubject VideoPath => #14
        SubscribeSubject CsvPath => #15
        SubscribeSubject VideoPath
        -> Bonsai.IO.GetFileNameWithoutExtension => #17
        #12, #13, #14, #15, #17 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            Item1 as RawDataPath,
            Item2 as PostProcessingPath,
            Item3 as VideoPath,
            Item4 as StimCsvPath,
            Item5 as FileName)
        -> Take(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput
-> InputMapping => #2
ExternalizedMapping(.FrameRate, SaveArenaVideo, ArenaThreshold, CenteredCropSize, BackgroundFrames, SaveCropRaw, SaveCropSubtracted) => #3
#2, #3 -> CreateObservable OfflineAnalysis
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SessionPaths

    SubscribeSubject SessionPaths
    -> MemberSelector(Selector=VideoPath)
    -> PropertyMapping(InputVideoPath) => #5
    SubscribeSubject SessionPaths
    -> MemberSelector(Selector=StimCsvPath)
    -> PropertyMapping(InputStimCsvPath) => #8
    ExternalizedMapping => #9
      FrameRate(DisplayName=.FrameRate, Category="2. Output Settings")
      SaveArenaVideo(Category="2. Output Settings")
      ArenaThreshold(Category="1. Tracking Settings")
      CenteredCropSize(Category="1. Tracking Settings")
      BackgroundFrames(Category="1. Tracking Settings")
      SaveCropRaw(Category="2. Output Settings")
      SaveCropSubtracted(Category="2. Output Settings")
    #5, #8, #9 -> GroupWorkflow Settings
        ExternalizedMapping(Value(DisplayName=CenteredCropSize))
        -> PropertySource<Bonsai.Vision.Resize,OpenCV.Net.Size>(MemberName=Size, Value(Width=128, Height=128))
        -> Take(Count=1)
        -> AsyncSubject FlyCenteredCropSize

        ExternalizedMapping(Value(DisplayName=ArenaThreshold))
        -> IntProperty(Value=80)
        -> Take(Count=1)
        -> AsyncSubject ArenaThreshold

        ExternalizedMapping(Value(DisplayName=BackgroundFrames))
        -> IntProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject BakgroundFrames

        ExternalizedMapping(Value(DisplayName=InputVideoPath))
        -> PropertySource<Bonsai.Vision.FileCapture,System.String>
          MemberName=FileName
          Value: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\RawData\MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47.avi
        -> Take(Count=1)
        -> AsyncSubject InputVideoPath

        ExternalizedMapping(Value(DisplayName=InputStimCsvPath))
        -> PropertySource<Bonsai.Vision.FileCapture,System.String>
          MemberName=FileName
          Value: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\RawData\MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47.csv
        -> Take(Count=1)
        -> AsyncSubject InputStimCsvPath

        ExternalizedMapping(Value(DisplayName=SaveArenaVideo))
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> AsyncSubject SaveArenaVideo

        ExternalizedMapping(Value(DisplayName=SaveCropRaw))
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> AsyncSubject SaveCropRaw

        ExternalizedMapping(Value(DisplayName=SaveCropSubtracted))
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> AsyncSubject SaveCropSubtracted

        ExternalizedMapping(Value(DisplayName=FrameRate))
        -> IntProperty(Value=60)
        -> Take(Count=1)
        -> AsyncSubject FrameRate

    GroupWorkflow DataLoader
        SubscribeSubject InputStimCsvPath
        -> PropertyMapping(FileName) => #1
        SubscribeSubject InputVideoPath
        -> PropertyMapping(FileName)
        -> Bonsai.Vision.FileCapture => #4
          FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\RawData\MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47.avi
          PlaybackRate=999999
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        #1, #4 -> Bonsai.IO.CsvReader => #5
          FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\RawData\MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47.csv
          ScanPattern="%i,%I,%l"
          SkipRows=1
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Scripting.IronPython.PythonTransform => #7
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int])
            def process(value):
              if value == 4:
                return Tuple.Create(0,0,0)
              if value == 0:
                return Tuple.Create(1,0,0)
              if value == 12:
                return Tuple.Create(0,1,0)
              if value == 5:
                return Tuple.Create(0,0,1)
              if value == 8:
                return Tuple.Create(1,1,0)
              if value == 1:
                return Tuple.Create(1,0,1)
              if value == 13:
                return Tuple.Create(0,1,1)
              if value == 9:
                return Tuple.Create(1,1,1)
        #5 -> MemberSelector(Selector="Item2,Item3") => #8
        #7, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #10
          Expression:
            new(
            Item1.Item1 as Visual,
            Item1.Item2 as Stim0,
            Item1.Item3 as Stim1,
            Item2.Item1 as FrameID,
            Item2.Item2 as FrameTimeStamp
            )
        #4 -> Bonsai.Vision.Grayscale => #11
        #4 -> ElementIndex
        -> MemberSelector(Selector=Index) => #13
        #10, #11, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            Item1 as Stimuli,
            Item2 as Video,
            Item3 as FrameCount_Video
            )
        -> PublishSubject Video&Stimuli
        -> DelaySubscription(DueTime=PT7S) => #17
        SubscribeSubject ArenaFeeds
        -> Take(Count=1) => #19
        #17, #19 -> SubscribeWhen

        Defer Background
            SubscribeSubject InputVideoPath
            -> PropertyMapping(FileName) => #1
            SubscribeSubject BakgroundFrames
            -> PropertyMapping(NumberBackgroundFrames) => #3
            #1, #3 -> Defer CalculateBackground
                ExternalizedMapping(Value(DisplayName=NumberBackgroundFrames))
                -> IntProperty(Value=1000)
                -> Take(Count=1)
                -> AsyncSubject NumberBackgroundFrames

                ExternalizedMapping(Value(DisplayName=FileName))
                -> StringProperty
                  Value: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\RawData\MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47.avi
                -> Take(Count=1)
                -> AsyncSubject FileName

                SubscribeSubject FileName
                -> PropertyMapping(FileName)
                -> Bonsai.Vision.FileCapture
                  FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\RawData\MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47.avi
                  PlaybackRate=99999999
                  StartPosition=0
                  PositionUnits=Frames
                  Loop=false
                  Playing=true
                -> Bonsai.Vision.Grayscale => #11
                ExternalizedMapping(PixelSearch, NoiseThreshold) => #12
                #11, #12 -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0) => #13
                SubscribeSubject NumberBackgroundFrames
                -> PropertyMapping(Count) => #15
                #13, #15 -> Take(Count=1000)
                -> TakeLast(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject BackgroundImage
        -> SelectMany FindArenas
            WorkflowInput Source1 => #0
            SubscribeSubject ArenaThreshold
            -> PropertyMapping(ThresholdValue) => #2
            #0, #2 -> Bonsai.Vision.Threshold(ThresholdValue=80, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=290000, MaxArea=380000)
            -> Bonsai.Vision.BinaryRegionAnalysis
            -> OrderBy(KeySelector="Centroid.X,Centroid.Y")
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject ArenaROIs
        -> SelectMany CropBackgrounds
            SubscribeSubject ArenaROIs
            -> Take(Count=1)
            -> Merge
            -> CreateObservable CropBackgroundArenas
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ArenaDetection

                SubscribeSubject BackgroundImage => #3
                SubscribeSubject ArenaDetection
                -> MemberSelector(Selector=Contour.Rect)
                -> PropertyMapping(RegionOfInterest) => #6
                #3, #6 -> Bonsai.Vision.Crop(RegionOfInterest(X=830, Y=49, Width=668, Height=671))
                -> WorkflowOutput
            -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject CroppedBackground
        -> SelectMany CreateArenaFeeds
            SubscribeSubject ArenaROIs
            -> Take(Count=1) => #1
            SubscribeSubject InputVideoPath
            -> PropertyMapping(FileName) => #3
            #1, #3 -> SelectMany TrackArenas
                ExternalizedMapping(Value(DisplayName=FileName))
                -> StringProperty
                  Value: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\RawData\MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47.avi
                -> Take(Count=1)
                -> AsyncSubject FileName

                SubscribeSubject CroppedBackground
                -> Merge => #5
                WorkflowInput Source1
                -> Merge => #7
                #5, #7 -> Zip
                -> CreateObservable CropCenter
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject This

                    SubscribeSubject This
                    -> MemberSelector(Selector=Item1)
                    -> Take(Count=1)
                    -> AsyncSubject CropBackground

                    SubscribeSubject Video&Stimuli => #7
                    -> MemberSelector(Selector=Video) => #8
                    SubscribeSubject This
                    -> MemberSelector(Selector=Item2.Contour.Rect) => #10
                    #8, #10 -> WithLatestFrom => #11
                    -> MemberSelector(Selector=Item1) => #12
                    #11 -> MemberSelector(Selector=Item2)
                    -> PropertyMapping(RegionOfInterest(Selector=it)) => #14
                    #12, #14 -> Bonsai.Vision.Crop(RegionOfInterest(X=830, Y=49, Width=668, Height=671)) => #15
                    SubscribeSubject CropBackground => #16
                    #15, #16 -> WithLatestFrom
                    -> Bonsai.Dsp.AbsoluteDifference => #18
                    SubscribeSubject CropBackground => #19
                    #15, #19 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #21
                    #7 -> MemberSelector(Selector=Stimuli) => #22
                    GroupWorkflow ArenaMaskFrame => #23
                        SubscribeSubject BackgroundImage => #0
                        SubscribeSubject This => #1
                        #0, #1 -> WithLatestFrom
                        -> InputMapping(Selector=Item1, RegionOfInterest(Selector=Item2.Item2.Contour.Rect))
                        -> Bonsai.Vision.Crop(RegionOfInterest(X=830, Y=49, Width=668, Height=671)) => #4
                        SubscribeSubject This
                        -> MemberSelector(Selector=Item2)
                        -> MemberSelector(Selector=Contour)
                        -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #8
                        #4, #8 -> WithLatestFrom
                        -> BitwiseAnd
                        -> WorkflowOutput
                    #15, #23 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #25
                    GroupWorkflow ArenaMaskVideo => #26
                        SubscribeSubject Video&Stimuli
                        -> MemberSelector(Selector=Video) => #1
                        SubscribeSubject This => #2
                        #1, #2 -> WithLatestFrom
                        -> InputMapping(Selector=Item1, RegionOfInterest(Selector=Item2.Item2.Contour.Rect))
                        -> Bonsai.Vision.Crop(RegionOfInterest(X=830, Y=49, Width=668, Height=671)) => #5
                        SubscribeSubject This
                        -> MemberSelector(Selector=Item2)
                        -> MemberSelector(Selector=Contour)
                        -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #9
                        #5, #9 -> WithLatestFrom
                        -> BitwiseAnd
                        -> WorkflowOutput
                    #15, #26 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #28
                    #15, #18, #21, #22, #25, #28 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1 as RawVideo,
                        Item2 as BackgroundSubtractedVideo,
                        Item3 as RawBackgroundFrame,
                        Item4 as Stimuli,
                        Item5 as MaskedArenaFrame,
                        Item6 as MaskedArenaVideo
                        )
                    -> WorkflowOutput
                -> WorkflowOutput
            -> ToList
            -> WorkflowOutput
        -> AsyncSubject ArenaFeeds

    GroupWorkflow AnalysisPipeline
        SubscribeSubject ArenaFeeds
        -> Take(Count=1)
        -> Merge
        -> ElementIndex
        -> CreateObservable ProcessSingleArenaFrames
            WorkflowInput Source1
            -> ReplaySubject Data(BufferSize=nil)

            SubscribeSubject Data
            -> MemberSelector(Selector=Index)
            -> Take(Count=1)
            -> AsyncSubject ArenaIndex

            SubscribeSubject Data
            -> MemberSelector(Selector=Value)
            -> Merge
            -> PublishSubject ArenaVideoStream

            GroupWorkflow CentroidTracking
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedVideo) => #1
                -> Bonsai.Vision.Threshold(ThresholdValue=76, MaxValue=255, ThresholdType=Binary)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid) => #6
                #1 -> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=Binary)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid) => #11
                #6, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                  Expression:
                    new(
                    Item1 as SoftCentroid,
                    Item2 as HardCentroid)
                -> Bonsai.Scripting.Expressions.ExpressionTransform PickBestCentroid
                  Expression: it.SoftCentroid.X > 0 ? it.SoftCentroid : it.HardCentroid
                -> PublishSubject BestCentroid => #15
                SubscribeSubject BestCentroid => #16
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #18
                #16, #18 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.X / Item2.Width as X,
                    Item1.Y / Item2.Height as Y
                    )
                -> InputMapping(Selector="X,Y", X(Selector=X), Y(Selector=Y))
                -> Bonsai.Vision.CreatePoint2f(X=0.9018414, Y=0.440407544)
                -> PublishSubject NormalizedBestCentroid => #23
                #15, #23 -> Zip
                -> WorkflowOutput

            GroupWorkflow PixelChange
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedVideo)
                -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Dark)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
                -> Bonsai.Dsp.CountNonZero
                -> PublishSubject PixelChange
                -> WorkflowOutput

            GroupWorkflow CenteredVideo
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=RawVideo) => #1
                SubscribeSubject BestCentroid => #2
                #1, #2 -> Zip => #3
                SubscribeSubject FlyCenteredCropSize
                -> PropertyMapping(Size) => #5
                #3, #5 -> Bonsai.Vision.CropCenter(Size(Width=128, Height=128), FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
                -> PublishSubject CenteredVideo
                -> WorkflowOutput

            Disable GroupWorkflow CenteredBackgroundSubVideo
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedVideo) => #1
                SubscribeSubject BestCentroid => #2
                #1, #2 -> Zip => #3
                SubscribeSubject FlyCenteredCropSize
                -> PropertyMapping(Size) => #5
                #3, #5 -> Bonsai.Vision.CropCenter(Size(Width=128, Height=128), FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
                -> PublishSubject CenteredVideoBackSub
                -> WorkflowOutput

            GroupWorkflow ArenaAnnotation
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=MaskedArenaVideo) => #1
                -> PropertyMapping(Size(Selector=Size)) => #2
                #1, #2 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=668, Height=671), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #3
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=MaskedArenaVideo)
                -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr)
                -> PropertyMapping(Image(Selector=it)) => #7
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=MaskedArenaVideo)
                -> PropertyMapping(Destination(Selector=RegionOfInterest)) => #10
                #3, #7, #10 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=668, Height=671), Interpolation=Linear) => #11
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=Stimuli.Visual)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    from System import Tuple
                    @returns(Tuple[int, int, int, int])
                    def process(value):
                      if value == 0:
                        return Tuple.Create(50,50,50, 255)
                      if value == 1:
                        return Tuple.Create(200,200,200, 255)
                -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #15
                #11, #15 -> Bonsai.Vision.Drawing.Circle(Center(X=35, Y=40), Radius=25, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0) => #16
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=Stimuli.Stim0)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    from System import Tuple
                    @returns(Tuple[int, int, int, int])
                    def process(value):
                      if value == 0:
                        return Tuple.Create(50,50,50, 255)
                      if value == 1:
                        return Tuple.Create(200,200,200, 255)
                -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #20
                #16, #20 -> Bonsai.Vision.Drawing.Circle(Center(X=100, Y=25), Radius=12, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
                -> Bonsai.Vision.Drawing.AddText => #22
                  Text=0
                  Alignment=Near
                  LineAlignment=Near
                  TextRenderingHint=AntiAliasGridFit
                  Color(Val0=150, Val1=150, Val2=150, Val3=255)
                  Font="Microsoft Sans Serif, 12pt, style=Bold"
                  Origin(X=65, Y=12)
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=Stimuli.Stim1)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    from System import Tuple
                    @returns(Tuple[int, int, int, int])
                    def process(value):
                      if value == 0:
                        return Tuple.Create(50,50,50, 255)
                      if value == 1:
                        return Tuple.Create(200,200,200, 255)
                -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #26
                #22, #26 -> Bonsai.Vision.Drawing.Circle(Center(X=100, Y=55), Radius=12, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
                -> Bonsai.Vision.Drawing.AddText
                  Text=1
                  Alignment=Near
                  LineAlignment=Near
                  TextRenderingHint=AntiAliasGridFit
                  Color(Val0=150, Val1=150, Val2=150, Val3=255)
                  Font="Microsoft Sans Serif, 12pt, style=Bold"
                  Origin(X=65, Y=42)
                -> Bonsai.Vision.Drawing.DrawCanvas
                -> PublishSubject ArenaAnnotation
                -> WorkflowOutput

            GroupWorkflow LoggingTracked
                GroupWorkflow ArenaPNG
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector=MaskedArenaFrame) => #1
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\Arenas)) => #4
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #6
                    SubscribeSubject ArenaIndex => #7
                    #4, #6, #7 -> Zip
                    -> Format(Format={0}/{1}_fly{2}.png, Selector="Item1,Item2,Item3") => #9
                    #1, #9 -> WithLatestFrom
                    -> InputMapping(Selector=Item1, FileName(Selector=Item2))
                    -> Bonsai.Vision.SaveImage
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\PostProcessing\Arenas/MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47_fly3.png
                      Suffix=None
                    -> Take(Count=1)
                    -> WorkflowOutput

                GroupWorkflow TrackedCSV
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\Tracked)) => #2
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #4
                    SubscribeSubject ArenaIndex => #5
                    #2, #4, #5 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_tracked.csv, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #8
                    SubscribeSubject Video&Stimuli
                    -> MemberSelector(Selector=FrameCount_Video) => #10
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector="Stimuli.Visual,Stimuli.Stim0,Stimuli.Stim1,Stimuli.FrameID,Stimuli.FrameTimeStamp") => #12
                    SubscribeSubject NormalizedBestCentroid => #13
                    SubscribeSubject PixelChange => #14
                    #10, #12, #13, #14 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #16
                      Expression:
                        new(
                        Item2.Item4 as FrameID,
                        Item2.Item5 as FrameTimeStamp,
                        Item1 as FrameIndex,
                        Item2.Item1 as VisualStim,
                        Item2.Item2 as Stim0,
                        Item2.Item3 as Stim1,
                        Item3.X as NormalizedCentroidX,
                        Item3.Y as NormalizedCentroidY,
                        Item4 as PixelChange
                        )
                    #8, #16 -> Bonsai.IO.CsvWriter
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\PostProcessing\Tracked/MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47_fly3_tracked.csv
                      Append=false
                      Overwrite=false
                      Suffix=None
                      IncludeHeader=true
                    -> WorkflowOutput

                GroupWorkflow ArenaVideo => #2
                    SubscribeSubject ArenaAnnotation
                    -> Bonsai.Vision.Grayscale => #1
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\ArenaVideos)) => #4
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #6
                    SubscribeSubject ArenaIndex => #7
                    #4, #6, #7 -> Zip
                    -> Format(Format={0}/{1}_fly{2}.avi, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #10
                    SubscribeSubject FrameRate
                    -> PropertyMapping(FrameRate) => #12
                    #1, #10, #12 -> Bonsai.Vision.VideoWriter
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\PostProcessing\ArenaVideos/MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47_fly3.avi
                      Suffix=FileCount
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=60
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput
                SubscribeSubject SaveArenaVideo
                -> Condition => #4
                    WorkflowInput Source1
                    -> Equal(Operand=BooleanProperty(Value=true))
                    -> WorkflowOutput
                #2, #4 -> SubscribeWhen

                GroupWorkflow CropRawVideo => #6
                    SubscribeSubject CenteredVideo
                    -> Bonsai.Vision.Grayscale => #1
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\CropRaw)) => #4
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #6
                    SubscribeSubject ArenaIndex => #7
                    #4, #6, #7 -> Zip
                    -> Format(Format={0}/{1}_fly{2}.avi, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #10
                    SubscribeSubject FrameRate
                    -> PropertyMapping(FrameRate) => #12
                    #1, #10, #12 -> Bonsai.Vision.VideoWriter
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\PostProcessing\CropRaw/MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamB-2025-08-26T12_12_47_fly3.avi
                      Suffix=FileCount
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=60
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput
                SubscribeSubject SaveCropRaw
                -> Condition => #8
                    WorkflowInput Source1
                    -> Equal(Operand=BooleanProperty(Value=true))
                    -> WorkflowOutput
                #6, #8 -> SubscribeWhen

                Disable GroupWorkflow CropSubtractedVideo => #10
                    SubscribeSubject CenteredVideoBackSub
                    -> Bonsai.Vision.Grayscale => #1
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\CropSubtracted)) => #4
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #6
                    SubscribeSubject ArenaIndex => #7
                    #4, #6, #7 -> Zip
                    -> Format(Format={0}/{1}_fly{2}.avi, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #10
                    SubscribeSubject FrameRate
                    -> PropertyMapping(FrameRate) => #12
                    #1, #10, #12 -> Bonsai.Vision.VideoWriter
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\Test 290 3MP\PostProcessing\CropSubtracted/MF-Mix-TestLoomOpto-Female-4to6days-FH1-CamA-2025-08-26T11_21_10_fly2.avi
                      Suffix=FileCount
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=60
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput
                Disable SubscribeSubject SaveCropSubtracted
                -> Disable Condition => #12
                    WorkflowInput Source1
                    -> Equal(Operand=BooleanProperty(Value=true))
                    -> WorkflowOutput
                #10, #12 -> Disable SubscribeWhen

            GroupWorkflow VisualizerOut
                SubscribeSubject CenteredVideo => #0
                SubscribeSubject Video&Stimuli => #1
                -> MemberSelector(Selector=FrameCount_Video)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #3
                  Expression: new(it as FrameCount_ArenaStream)
                #1 -> MemberSelector(Selector=Stimuli) => #4
                SubscribeSubject ArenaAnnotation => #5
                SubscribeSubject PixelChange => #6
                #0, #3, #4, #5, #6 -> Zip => #7
                SubscribeSubject ArenaIndex => #8
                #7, #8 -> WithLatestFrom => #9
                SubscribeSubject SessionPaths
                -> MemberSelector(Selector=FileName) => #11
                #9, #11 -> WithLatestFrom => #12
                -> MemberSelector(Selector=Item1.Item2) => #13
                #12 -> MemberSelector(Selector=Item1.Item1.Item1) => #14
                #12 -> MemberSelector(Selector=Item1.Item1.Item2) => #15
                #12 -> MemberSelector(Selector=Item1.Item1.Item3) => #16
                #12 -> MemberSelector(Selector=Item2) => #17
                #12 -> MemberSelector(Selector=Item1.Item1.Item4) => #18
                #12 -> MemberSelector(Selector=Item1.Item1.Item5) => #19
                #13, #14, #15, #16, #17, #18, #19 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                  Expression:
                    new(
                    Item1 as ArenaIndex,
                    Item2 as CenteredVideo,
                    Item3 as FrameCount,
                    Item4 as Stimuli,
                    Item5 as Filename,
                    Item6 as ArenaAnnotation,
                    Item7 as PixelChange
                    )
                -> WorkflowOutput
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> WorkflowOutput
-> Concat
-> GroupWorkflow Visualizers
    WorkflowInput Source1
    -> GroupWorkflow Parse
        WorkflowInput Source1 => #0
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> PublishSubject Output
        #0 -> Condition Arena1
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> PublishSubject Arena1
        #0 -> Condition Arena2
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> PublishSubject Arena2
        #0 -> Condition Arena3
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> PublishSubject Arena3
        #0 -> Condition Arena4
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> PublishSubject Arena4

    SubscribeSubject Output
    -> MemberSelector(Selector=FrameCount)
    -> TakeLast(Count=1)
    -> PublishSubject LastFrame

    SubscribeSubject Output
    -> MemberSelector(Selector=Filename)
    -> DistinctUntilChanged
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #9
    GroupWorkflow VirtualLED
        SubscribeSubject Arena1
        -> MemberSelector(Selector=CenteredVideo)
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=600, Height=210), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #2
        SubscribeSubject Output
        -> MemberSelector(Selector=Stimuli.Visual)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int, int])
            def process(value):
              if value == 0:
                return Tuple.Create(50,50,50, 255)
              if value == 1:
                return Tuple.Create(200,200,200, 255)
        -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #6
        #2, #6 -> Bonsai.Vision.Drawing.Circle(Center(X=110, Y=125), Radius=70, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
        -> Bonsai.Vision.Drawing.AddText => #8
          Text=Visual
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 20pt"
          Origin(X=47, Y=5)
        SubscribeSubject Output
        -> MemberSelector(Selector=Stimuli.Stim0)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int, int])
            def process(value):
              if value == 0:
                return Tuple.Create(50,50,50, 255)
              if value == 1:
                return Tuple.Create(50,50,200, 255)
        -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #12
        #8, #12 -> Bonsai.Vision.Drawing.Circle(Center(X=300, Y=125), Radius=70, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
        -> Bonsai.Vision.Drawing.AddText => #14
          Text=Stim0
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 20pt"
          Origin(X=243, Y=5)
        SubscribeSubject Output
        -> MemberSelector(Selector=Stimuli.Stim1)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int, int])
            def process(value):
              if value == 0:
                return Tuple.Create(50,50,50, 255)
              if value == 1:
                return Tuple.Create(200,200,50, 255)
        -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #18
        #14, #18 -> Bonsai.Vision.Drawing.Circle(Center(X=480, Y=125), Radius=70, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
        -> Bonsai.Vision.Drawing.AddText
          Text=Stim1
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 20pt"
          Origin(X=423, Y=5)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #11
    GroupWorkflow TimeCount
        SubscribeSubject Output
        -> MemberSelector(Selector=Filename)
        -> DistinctUntilChanged
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> Format(Format="File:      {0} ", Selector=it)
        -> PublishSubject FileNumber

        SubscribeSubject Output
        -> MemberSelector(Selector=FrameCount.FrameCount_ArenaStream)
        -> Format(Format="Frame: {0}", Selector=it)
        -> PublishSubject FrameCount

        SubscribeSubject Output
        -> MemberSelector(Selector=Filename)
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalSeconds)
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Format(Format="Time:   {0} ", Selector=it) => #18
        SubscribeSubject FileNumber => #19
        #18, #19 -> SubscribeWhen
        -> PublishSubject SessionTimer

        SubscribeSubject Output
        -> MemberSelector(Selector=Filename)
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalSeconds)
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Format(Format="File:   {0} ", Selector=it)
        -> PublishSubject FileTimer => #29
        SubscribeSubject FileNumber => #30
        #29, #30 -> TakeUntil
        -> Repeat

        SubscribeSubject Arena1
        -> MemberSelector(Selector=CenteredVideo)
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1500, Height=210), Depth=U8, Channels=3, Color(Val0=32, Val1=32, Val2=32, Val3=0)) => #35
        SubscribeSubject FileNumber
        -> PropertyMapping(Text) => #37
        #35, #37 -> Bonsai.Vision.Drawing.AddText => #38
          Text="File:      5 "
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=200, Val1=200, Val2=200, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Origin(X=30, Y=5)
        SubscribeSubject FrameCount
        -> PropertyMapping(Text) => #40
        #38, #40 -> Bonsai.Vision.Drawing.AddText => #41
          Text="Frame: 36599"
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=200, Val1=200, Val2=200, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Origin(X=30, Y=100)
        SubscribeSubject SessionTimer
        -> PropertyMapping(Text) => #43
        #41, #43 -> Bonsai.Vision.Drawing.AddText => #44
          Text="Time:   01:46:35.3640000 "
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=200, Val1=200, Val2=200, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Origin(X=750, Y=5)
        SubscribeSubject FileTimer
        -> PropertyMapping(Text) => #46
        #44, #46 -> Bonsai.Vision.Drawing.AddText
          Text="File:   00:27:12.7370000 "
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=200, Val1=200, Val2=200, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Origin(X=810, Y=100)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #13
    SubscribeSubject Arena1
    -> MemberSelector(Selector=ArenaAnnotation)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #16
    SubscribeSubject Arena2
    -> MemberSelector(Selector=ArenaAnnotation)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #19
    SubscribeSubject Arena1
    -> MemberSelector(Selector=CenteredVideo)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #22
    SubscribeSubject Arena1
    -> MemberSelector(Selector=PixelChange)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #25
    SubscribeSubject Arena2
    -> MemberSelector(Selector=CenteredVideo)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #28
    SubscribeSubject Arena2
    -> MemberSelector(Selector=PixelChange)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #31
    SubscribeSubject Arena3
    -> MemberSelector(Selector=ArenaAnnotation)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #34
    SubscribeSubject Arena4
    -> MemberSelector(Selector=ArenaAnnotation)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #37
    SubscribeSubject Arena3
    -> MemberSelector(Selector=CenteredVideo)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #40
    SubscribeSubject Arena3
    -> MemberSelector(Selector=PixelChange)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #43
    SubscribeSubject Arena4
    -> MemberSelector(Selector=CenteredVideo)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #46
    SubscribeSubject Arena4
    -> MemberSelector(Selector=PixelChange)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #49
    #9, #11, #13, #16, #19, #22, #25, #28, #31, #34, #37, #40, #43, #46, #49 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 14pt, style=Bold"
      ColumnCount=21
      RowCount=15
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=21, RowSpan=1)
        CellSpan(ColumnSpan=6, RowSpan=2)
        CellSpan(ColumnSpan=15, RowSpan=2)
        CellSpan(ColumnSpan=6, RowSpan=6)
        CellSpan(ColumnSpan=6, RowSpan=6)
        CellSpan(ColumnSpan=3, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=3)
        CellSpan(ColumnSpan=3, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=6)
        CellSpan(ColumnSpan=6, RowSpan=6)
        CellSpan(ColumnSpan=3, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=3)
        CellSpan(ColumnSpan=3, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=3)
    -> Bonsai.Design.VisualizerWindow(Visible=true, Location(X=0, Y=100), Size(Width=1350, Height=900), WindowState=Normal)
    -> WorkflowOutput
-> GroupWorkflow EndRoutine
    WorkflowInput Source1 => #0
    SubscribeSubject LastFrame => #1
    #0, #1 -> TakeUntil
    -> TakeLast(Count=1)
    -> WorkflowOutput
-> WorkflowOutput
