WorkflowBuilder(Version=2.9.0)
ExternalizedMapping("1. Path"(DisplayName=ExperimentalFolder, Category="0. Load Path"))
-> GroupWorkflow GetPath
    ExternalizedMapping(Value(DisplayName="1. Path"))
    -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value=C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo)
    -> Add(Operand=StringProperty(Value=\RawData))
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path=C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\RawData, SearchPattern=*.avi, SearchOption=TopDirectoryOnly)
    -> Concat
    -> SelectMany BonflyPaths
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.IronPython.PythonTransform GetDirectory
          Script:
            from System.IO import Path

            @returns(str)
            def process(value):
              output = Path.GetDirectoryName(value)
              return output
        -> Take(Count=1)
        -> AsyncSubject RawDataPath
        #0 -> AsyncSubject VideoPath
        #0 -> Bonsai.Scripting.Expressions.ExpressionTransform Avi2Csv
          Expression: it.Replace(".avi", ".csv")
        -> AsyncSubject CsvPath

        SubscribeSubject RawDataPath
        -> Bonsai.Scripting.IronPython.PythonTransform GetDirectory
          Script:
            from System.IO import Path

            @returns(str)
            def process(value):
              output = Path.GetDirectoryName(value)
              return output
        -> Take(Count=1)
        -> Add(Operand=StringProperty(Value=\PostProcessing))
        -> AsyncSubject PostProcessingPath

        SubscribeSubject RawDataPath => #12
        SubscribeSubject PostProcessingPath => #13
        SubscribeSubject VideoPath => #14
        SubscribeSubject CsvPath => #15
        SubscribeSubject VideoPath
        -> Bonsai.IO.GetFileNameWithoutExtension => #17
        #12, #13, #14, #15, #17 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            Item1 as RawDataPath,
            Item2 as PostProcessingPath,
            Item3 as VideoPath,
            Item4 as StimCsvPath,
            Item5 as FileName)
        -> Take(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput
-> InputMapping => #2
ExternalizedMapping(CenteredCropSize, ArenaThreshold, BackgroundFrames, SaveFlyVideo, SaveCropVideo, FrameRate, ModelFileName, TrainingConfig, EnableSleap) => #3
#2, #3 -> CreateObservable OfflineAnalysis
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SessionPaths

    SubscribeSubject SessionPaths
    -> MemberSelector(Selector=VideoPath)
    -> PropertyMapping(InputVideoPath) => #5
    SubscribeSubject SessionPaths
    -> MemberSelector(Selector=StimCsvPath)
    -> PropertyMapping(InputStimCsvPath) => #8
    ExternalizedMapping => #9
      CenteredCropSize(Category="1. Tracking Settings")
      ArenaThreshold(Category="1. Tracking Settings")
      BackgroundFrames(Category="1. Tracking Settings")
      SaveFlyVideo(Category="2. Output Settings")
      SaveCropVideo(Category="2. Output Settings")
      FrameRate(Category="2. Output Settings")
      ModelFileName(Category="3. SLEAP Settings")
      TrainingConfig(Category="3. SLEAP Settings")
      EnableSleap(Category="3. SLEAP Settings")
    #5, #8, #9 -> GroupWorkflow Settings
        ExternalizedMapping(Value(DisplayName=CenteredCropSize))
        -> PropertySource<Bonsai.Vision.Resize,OpenCV.Net.Size>(MemberName=Size, Value(Width=128, Height=128))
        -> Take(Count=1)
        -> AsyncSubject FlyCenteredCropSize

        ExternalizedMapping(Value(DisplayName=ArenaThreshold))
        -> IntProperty(Value=80)
        -> Take(Count=1)
        -> AsyncSubject ArenaThreshold

        ExternalizedMapping(Value(DisplayName=BackgroundFrames))
        -> IntProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject BakgroundFrames

        ExternalizedMapping(Value(DisplayName=InputVideoPath))
        -> PropertySource<Bonsai.Vision.FileCapture,System.String>
          MemberName=FileName
          Value: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\RawData\CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58.avi
        -> Take(Count=1)
        -> AsyncSubject InputVideoPath

        ExternalizedMapping(Value(DisplayName=InputStimCsvPath))
        -> PropertySource<Bonsai.Vision.FileCapture,System.String>
          MemberName=FileName
          Value: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\RawData\CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58.csv
        -> Take(Count=1)
        -> AsyncSubject InputStimCsvPath

        ExternalizedMapping(Value(DisplayName=SaveFlyVideo))
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> AsyncSubject SaveFlyVideo

        ExternalizedMapping(Value(DisplayName=SaveCropVideo))
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> AsyncSubject SaveCropVideo

        ExternalizedMapping(Value(DisplayName=FrameRate))
        -> IntProperty(Value=60)
        -> Take(Count=1)
        -> AsyncSubject FrameRate

        ExternalizedMapping(Value(DisplayName=ModelFileName))
        -> PropertySource<Bonsai.Sleap.PredictSinglePose,System.String>(MemberName=ModelFileName, Value=SLEAPmodel\wBackground.frozen_graph.pb) => #33
        ExternalizedMapping(Value(DisplayName=TrainingConfig))
        -> PropertySource<Bonsai.Sleap.PredictSinglePose,System.String>(MemberName=TrainingConfig, Value=SLEAPmodel\wBackground.training_config.json) => #35
        ExternalizedMapping(Value(DisplayName=EnableSleap))
        -> BooleanProperty(Value=false) => #37
        #33, #35, #37 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as ModelFileName,
            Item2 as TrainingConfig,
            Item3 as EnableSleap)
        -> Take(Count=1)
        -> AsyncSubject SleapModelConfiguration

    GroupWorkflow DataLoader
        SubscribeSubject InputStimCsvPath
        -> PropertyMapping(FileName) => #1
        SubscribeSubject InputVideoPath
        -> PropertyMapping(FileName)
        -> Bonsai.Vision.FileCapture => #4
          FileName: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\RawData\CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58.avi
          PlaybackRate=999999
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        #1, #4 -> Bonsai.IO.CsvReader
          FileName: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\RawData\CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58.csv
          ScanPattern=%i
          SkipRows=1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int])
            def process(value):
              if value == 4:
                return Tuple.Create(0,0,0)
              if value == 0:
                return Tuple.Create(1,0,0)
              if value == 8:
                return Tuple.Create(0,1,0)
              if value == 1:
                return Tuple.Create(0,0,1)
              if value == 12:
                return Tuple.Create(1,1,0)
              if value == 5:
                return Tuple.Create(1,0,1)
              else:
                return Tuple.Create(-1,-1,-1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #7
          Expression:
            new(
            Item1 as Visual,
            Item2 as Stim0,
            Item3 as Stim1
            )
        #4 -> Bonsai.Vision.Grayscale => #8
        #4 -> ElementIndex
        -> MemberSelector(Selector=Index) => #10
        #7, #8, #10 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            Item1 as Stimuli,
            Item2 as Video,
            Item3 as FrameCount_Video
            )
        -> PublishSubject Video&Stimuli
        -> DelaySubscription(DueTime=PT7S) => #14
        SubscribeSubject ArenaFeeds
        -> Take(Count=1) => #16
        #14, #16 -> SubscribeWhen

        Defer Background
            SubscribeSubject InputVideoPath
            -> PropertyMapping(FileName) => #1
            SubscribeSubject BakgroundFrames
            -> PropertyMapping(NumberBackgroundFrames) => #3
            #1, #3 -> Defer CalculateBackground
                ExternalizedMapping(Value(DisplayName=NumberBackgroundFrames))
                -> IntProperty(Value=1000)
                -> Take(Count=1)
                -> AsyncSubject NumberBackgroundFrames

                ExternalizedMapping(Value(DisplayName=FileName))
                -> StringProperty
                  Value: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\RawData\CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58.avi
                -> Take(Count=1)
                -> AsyncSubject FileName

                SubscribeSubject FileName
                -> PropertyMapping(FileName)
                -> Bonsai.Vision.FileCapture
                  FileName: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\RawData\CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58.avi
                  PlaybackRate=99999999
                  StartPosition=0
                  PositionUnits=Frames
                  Loop=false
                  Playing=true
                -> Bonsai.Vision.Grayscale => #11
                ExternalizedMapping(PixelSearch, NoiseThreshold) => #12
                #11, #12 -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0) => #13
                SubscribeSubject NumberBackgroundFrames
                -> PropertyMapping(Count) => #15
                #13, #15 -> Take(Count=1000)
                -> TakeLast(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject BackgroundImage
        -> SelectMany FindArenas
            WorkflowInput Source1 => #0
            SubscribeSubject ArenaThreshold
            -> PropertyMapping(ThresholdValue) => #2
            #0, #2 -> Bonsai.Vision.Threshold(ThresholdValue=80, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=290000, MaxArea=380000)
            -> Bonsai.Vision.BinaryRegionAnalysis
            -> OrderBy(KeySelector="Centroid.X,Centroid.Y")
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject ArenaROIs
        -> SelectMany CropBackgrounds
            SubscribeSubject ArenaROIs
            -> Take(Count=1)
            -> Merge
            -> CreateObservable CropBackgroundArenas
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ArenaDetection

                SubscribeSubject BackgroundImage => #3
                SubscribeSubject ArenaDetection
                -> MemberSelector(Selector=Contour.Rect)
                -> PropertyMapping(RegionOfInterest) => #6
                #3, #6 -> Bonsai.Vision.Crop(RegionOfInterest(X=853, Y=78, Width=662, Height=665))
                -> WorkflowOutput
            -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject CroppedBackground
        -> SelectMany CreateArenaFeeds
            SubscribeSubject ArenaROIs
            -> Take(Count=1) => #1
            SubscribeSubject InputVideoPath
            -> PropertyMapping(FileName) => #3
            #1, #3 -> SelectMany TrackArenas
                ExternalizedMapping(Value(DisplayName=FileName))
                -> StringProperty
                  Value: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\RawData\CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58.avi
                -> Take(Count=1)
                -> AsyncSubject FileName

                SubscribeSubject CroppedBackground
                -> Merge => #5
                WorkflowInput Source1
                -> Merge => #7
                #5, #7 -> Zip
                -> CreateObservable CropCenter
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject This

                    SubscribeSubject This
                    -> MemberSelector(Selector=Item1)
                    -> Take(Count=1)
                    -> AsyncSubject CropBackground

                    SubscribeSubject CropBackground => #7
                    SubscribeSubject ArenaThreshold
                    -> PropertyMapping(ThresholdValue) => #9
                    #7, #9 -> Bonsai.Vision.Threshold(ThresholdValue=80, MaxValue=255, ThresholdType=Binary)
                    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=300000, MaxArea=nil)
                    -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
                    -> Bonsai.Vision.MorphologicalOperator(Size(Width=7, Height=7), Anchor(X=-1, Y=-1), Shape=Ellipse, Iterations=7, Operation=Erode)
                    -> Take(Count=1)
                    -> AsyncSubject ErodedROI

                    SubscribeSubject Video&Stimuli => #16
                    -> MemberSelector(Selector=Video) => #17
                    SubscribeSubject This
                    -> MemberSelector(Selector=Item2.Contour.Rect) => #19
                    #17, #19 -> WithLatestFrom => #20
                    -> MemberSelector(Selector=Item1) => #21
                    #20 -> MemberSelector(Selector=Item2)
                    -> PropertyMapping(RegionOfInterest(Selector=it)) => #23
                    #21, #23 -> Bonsai.Vision.Crop(RegionOfInterest(X=853, Y=78, Width=662, Height=665)) => #24
                    SubscribeSubject ErodedROI => #25
                    #24, #25 -> WithLatestFrom
                    -> Bonsai.Vision.Mask(FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #27
                    SubscribeSubject CropBackground => #28
                    SubscribeSubject ErodedROI => #29
                    #28, #29 -> Zip
                    -> Bonsai.Vision.Mask(FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #31
                    #27, #31 -> WithLatestFrom
                    -> Bonsai.Dsp.AbsoluteDifference => #33
                    SubscribeSubject CropBackground => #34
                    #24, #34 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #36
                    #16 -> MemberSelector(Selector=Stimuli) => #37
                    GroupWorkflow ArenaMaskFrame => #38
                        SubscribeSubject BackgroundImage => #0
                        SubscribeSubject This => #1
                        #0, #1 -> WithLatestFrom
                        -> InputMapping(Selector=Item1, RegionOfInterest(Selector=Item2.Item2.Contour.Rect))
                        -> Bonsai.Vision.Crop(RegionOfInterest(X=853, Y=78, Width=662, Height=665)) => #4
                        SubscribeSubject This
                        -> MemberSelector(Selector=Item2)
                        -> MemberSelector(Selector=Contour)
                        -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #8
                        #4, #8 -> WithLatestFrom
                        -> BitwiseAnd
                        -> WorkflowOutput
                    #24, #38 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #40
                    GroupWorkflow ArenaMaskVideo => #41
                        SubscribeSubject Video&Stimuli
                        -> MemberSelector(Selector=Video) => #1
                        SubscribeSubject This => #2
                        #1, #2 -> WithLatestFrom
                        -> InputMapping(Selector=Item1, RegionOfInterest(Selector=Item2.Item2.Contour.Rect))
                        -> Bonsai.Vision.Crop(RegionOfInterest(X=853, Y=78, Width=662, Height=665)) => #5
                        SubscribeSubject This
                        -> MemberSelector(Selector=Item2)
                        -> MemberSelector(Selector=Contour)
                        -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #9
                        #5, #9 -> WithLatestFrom
                        -> BitwiseAnd
                        -> WorkflowOutput
                    #24, #41 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #43
                    #24, #33, #36, #37, #40, #43 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1 as RawVideo,
                        Item2 as BackgroundSubtractedVideoEroded,
                        Item3 as RawBackgroundFrame,
                        Item4 as Stimuli,
                        Item5 as MaskedArenaFrame,
                        Item6 as MaskedArenaVideo
                        )
                    -> WorkflowOutput
                    SubscribeSubject CropBackground => #47
                    #24, #47 -> WithLatestFrom
                    -> Bonsai.Dsp.AbsoluteDifference
                -> WorkflowOutput
            -> ToList
            -> WorkflowOutput
        -> AsyncSubject ArenaFeeds

    GroupWorkflow AnalysisPipeline
        SubscribeSubject ArenaFeeds
        -> Take(Count=1)
        -> Merge
        -> ElementIndex
        -> CreateObservable ProcessSingleArenaFrames
            WorkflowInput Source1
            -> ReplaySubject Data(BufferSize=nil)

            SubscribeSubject Data
            -> MemberSelector(Selector=Index)
            -> Take(Count=1)
            -> AsyncSubject ArenaIndex

            SubscribeSubject Data
            -> MemberSelector(Selector=Value)
            -> Merge
            -> PublishSubject ArenaVideoStream

            GroupWorkflow CentroidTracking
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedVideoEroded) => #1
                -> Bonsai.Vision.Threshold(ThresholdValue=76, MaxValue=255, ThresholdType=Binary)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid) => #6
                #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid) => #11
                #6, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                  Expression:
                    new(
                    Item1 as SoftCentroid,
                    Item2 as HardCentroid)
                -> Bonsai.Scripting.Expressions.ExpressionTransform PickBestCentroid
                  Expression: it.SoftCentroid.X > 0 ? it.SoftCentroid : it.HardCentroid
                -> PublishSubject BestCentroid => #15
                SubscribeSubject BestCentroid => #16
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #18
                #16, #18 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.X / Item2.Width as X,
                    Item1.Y / Item2.Height as Y
                    )
                -> InputMapping(Selector="X,Y", X(Selector=X), Y(Selector=Y))
                -> Bonsai.Vision.CreatePoint2f(X=0.755222857, Y=0.126299441)
                -> PublishSubject NormalizedBestCentroid => #23
                #15, #23 -> Zip
                -> WorkflowOutput

            GroupWorkflow PixelChange
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=RawVideo)
                -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Dark)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
                -> Bonsai.Dsp.CountNonZero
                -> PublishSubject PixelChange
                -> WorkflowOutput

            GroupWorkflow CenteredVideo
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=RawVideo) => #1
                SubscribeSubject BestCentroid => #2
                #1, #2 -> Zip => #3
                SubscribeSubject FlyCenteredCropSize
                -> PropertyMapping(Size) => #5
                #3, #5 -> Bonsai.Vision.CropCenter(Size(Width=128, Height=128), FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
                -> PublishSubject CenteredVideo
                -> WorkflowOutput

            GroupWorkflow ArenaAnnotation
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=MaskedArenaVideo)
                -> Bonsai.Vision.Resize(Size(Width=704, Height=704), Interpolation=Linear)
                -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=704, Height=704), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #3
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=MaskedArenaVideo)
                -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr)
                -> PropertyMapping(Image(Selector=it)) => #7
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=MaskedArenaVideo)
                -> Bonsai.Vision.Resize(Size(Width=704, Height=704), Interpolation=Linear)
                -> PropertyMapping(Destination(Selector=RegionOfInterest)) => #11
                #3, #7, #11 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=704, Height=704), Interpolation=Linear) => #12
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=Stimuli.Visual)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    from System import Tuple
                    @returns(Tuple[int, int, int, int])
                    def process(value):
                      if value == 0:
                        return Tuple.Create(50,50,50, 255)
                      if value == 1:
                        return Tuple.Create(200,200,200, 255)
                -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #16
                #12, #16 -> Bonsai.Vision.Drawing.Circle(Center(X=40, Y=40), Radius=33, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0) => #17
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=Stimuli.Stim0)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    from System import Tuple
                    @returns(Tuple[int, int, int, int])
                    def process(value):
                      if value == 0:
                        return Tuple.Create(50,50,50, 255)
                      if value == 1:
                        return Tuple.Create(200,200,200, 255)
                -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #21
                #17, #21 -> Bonsai.Vision.Drawing.Circle(Center(X=110, Y=22), Radius=12, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
                -> Bonsai.Vision.Drawing.AddText => #23
                  Text=0
                  Alignment=Near
                  LineAlignment=Near
                  TextRenderingHint=AntiAliasGridFit
                  Color(Val0=200, Val1=200, Val2=200, Val3=255)
                  Font="Microsoft Sans Serif, 12pt, style=Bold"
                  Origin(X=75, Y=9)
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=Stimuli.Stim1)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    from System import Tuple
                    @returns(Tuple[int, int, int, int])
                    def process(value):
                      if value == 0:
                        return Tuple.Create(50,50,50, 255)
                      if value == 1:
                        return Tuple.Create(200,200,200, 255)
                -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #27
                #23, #27 -> Bonsai.Vision.Drawing.Circle(Center(X=110, Y=55), Radius=12, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
                -> Bonsai.Vision.Drawing.AddText => #29
                  Text=1
                  Alignment=Near
                  LineAlignment=Near
                  TextRenderingHint=AntiAliasGridFit
                  Color(Val0=200, Val1=200, Val2=200, Val3=255)
                  Font="Microsoft Sans Serif, 12pt, style=Bold"
                  Origin(X=75, Y=42)
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=MaskedArenaVideo)
                -> ElementIndex
                -> MemberSelector(Selector=Index)
                -> Format(Format="# {0}", Selector=it)
                -> PropertyMapping(Text) => #35
                #29, #35 -> Bonsai.Vision.Drawing.AddText
                  Text="# 29117"
                  Alignment=Near
                  LineAlignment=Near
                  TextRenderingHint=AntiAliasGridFit
                  Color(Val0=200, Val1=200, Val2=200, Val3=255)
                  Font="Microsoft Sans Serif, 15pt, style=Bold"
                  Origin(X=575, Y=655)
                -> Bonsai.Vision.Drawing.DrawCanvas
                -> PublishSubject ArenaAnnotation
                -> WorkflowOutput

            GroupWorkflow LoggingTracked
                GroupWorkflow ArenaPNG
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector=MaskedArenaFrame) => #1
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\ArenaImage)) => #4
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #6
                    SubscribeSubject ArenaIndex => #7
                    #4, #6, #7 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_arenaimg.png, Selector="Item1,Item2,Item3") => #9
                    #1, #9 -> WithLatestFrom
                    -> InputMapping(Selector=Item1, FileName(Selector=Item2))
                    -> Bonsai.Vision.SaveImage
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\PostProcessing\ArenaImage/CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58_fly3_arenaimg.png
                      Suffix=None
                    -> Take(Count=1)
                    -> WorkflowOutput

                GroupWorkflow TrackedCSV
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\Tracked)) => #2
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #4
                    SubscribeSubject ArenaIndex => #5
                    #2, #4, #5 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_tracked.csv, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #8
                    SubscribeSubject Video&Stimuli
                    -> MemberSelector(Selector=FrameCount_Video) => #10
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector="Stimuli.Visual,Stimuli.Stim0,Stimuli.Stim1") => #12
                    SubscribeSubject NormalizedBestCentroid => #13
                    SubscribeSubject PixelChange => #14
                    #10, #12, #13, #14 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #16
                      Expression:
                        new(
                        Item1 as FrameIndex,
                        Item2.Item1 as VisualStim,
                        Item2.Item2 as Stim0,
                        Item2.Item3 as Stim1,
                        Item3.X as NormalizedCentroidX,
                        Item3.Y as NormalizedCentroidY,
                        Item4 as PixelChange
                        )
                    #8, #16 -> Bonsai.IO.CsvWriter
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\PostProcessing\Tracked/CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58_fly3_tracked.csv
                      Append=false
                      Overwrite=false
                      Suffix=None
                      IncludeHeader=true
                    -> WorkflowOutput

                GroupWorkflow ArenaVideo => #2
                    SubscribeSubject ArenaAnnotation
                    -> Bonsai.Vision.Grayscale => #1
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\FlyVideo)) => #4
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #6
                    SubscribeSubject ArenaIndex => #7
                    #4, #6, #7 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_flyvideo.avi, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #10
                    SubscribeSubject FrameRate
                    -> PropertyMapping(FrameRate) => #12
                    #1, #10, #12 -> Bonsai.Vision.VideoWriter
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\PostProcessing\FlyVideo/CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58_fly3_flyvideo.avi
                      Suffix=None
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=60
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput
                SubscribeSubject SaveFlyVideo
                -> Condition => #4
                    WorkflowInput Source1
                    -> Equal(Operand=BooleanProperty(Value=true))
                    -> WorkflowOutput
                #2, #4 -> SubscribeWhen

                GroupWorkflow CropRawVideo => #6
                    SubscribeSubject CenteredVideo
                    -> Bonsai.Vision.Grayscale => #1
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\CropVideo)) => #4
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #6
                    SubscribeSubject ArenaIndex => #7
                    #4, #6, #7 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_cropvideo.avi, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #10
                    SubscribeSubject FrameRate
                    -> PropertyMapping(FrameRate) => #12
                    #1, #10, #12 -> Bonsai.Vision.VideoWriter
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Vibration-Tracker\ExampleVideo\PostProcessing\CropVideo/CR-DGRP315-7None_20BlackoutVibration-Female-4to7days-FH2-CamB-2025-08-10T16_05_58_fly3_cropvideo.avi
                      Suffix=None
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=60
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput
                SubscribeSubject SaveCropVideo
                -> Condition => #8
                    WorkflowInput Source1
                    -> Equal(Operand=BooleanProperty(Value=true))
                    -> WorkflowOutput
                #6, #8 -> SubscribeWhen

                GroupWorkflow SleapCSV => #10
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\Sleap)) => #2
                    SubscribeSubject SessionPaths
                    -> MemberSelector(Selector=FileName) => #4
                    SubscribeSubject ArenaIndex => #5
                    #2, #4, #5 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_sleap.csv, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #8
                    GroupWorkflow SleapOutput => #9
                        SubscribeSubject Video&Stimuli
                        -> MemberSelector(Selector=FrameCount_Video) => #1
                        SubscribeSubject NormalizedBodyParts => #2
                        #1, #2 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform Header
                          Expression:
                            new(
                            Item1 as FrameIndex,
                            Item2.ViewPoints.Left as Left,
                            Item2.ViewPoints.Right as Right,
                            Item2.ViewPoints.Top as Top,
                            Item2.BodyPoints.Head as Head,
                            Item2.BodyPoints.Thorax as Thorax,
                            Item2.BodyPoints.Abdomen as Abdomen,
                            Item2.BodyPoints.LeftWing as LeftWing,
                            Item2.BodyPoints.RightWing as RightWing
                            )
                        -> WorkflowOutput
                    #8, #9 -> Bonsai.IO.CsvWriter
                      FileName: C:\Users\MF\Documents\GitHub\Bonfly\Personal-Bonfly\ExampleVideos\PostProcessing\Pose/MF-LC6_X_CS_ChS(NoRetinal)-20OptoPulsed15mWcm2-Female-4to5days-FH2-CamB-2025-08-28T12_01_08_fly3_pose.csv
                      Append=false
                      Overwrite=false
                      Suffix=None
                      IncludeHeader=true
                    -> WorkflowOutput
                SubscribeSubject SleapModelConfiguration
                -> MemberSelector(Selector=EnableSleap)
                -> Condition => #13
                    WorkflowInput Source1
                    -> WorkflowOutput
                #10, #13 -> SubscribeWhen

            GroupWorkflow SleapTracking => #15
                SubscribeSubject CenteredVideo => #0
                SubscribeSubject SleapModelConfiguration
                -> PropertyMapping(ModelFileName(Selector=ModelFileName), TrainingConfig(Selector=TrainingConfig)) => #2
                #0, #2 -> Bonsai.Sleap.PredictSinglePose
                  ModelFileName=SLEAPmodel\wBackground.frozen_graph.pb
                  TrainingConfig=SLEAPmodel\wBackground.training_config.json
                  PartMinConfidence=nil
                  ScaleFactor=nil
                  ColorConversion=nil
                -> PublishSubject PoseStream

                SubscribeSubject CenteredVideo
                -> MemberSelector(Selector=RegionOfInterest) => #6
                SubscribeSubject BestCentroid => #7
                #6, #7 -> Zip
                -> Bonsai.Scripting.IronPython.PythonTransform CropCorrection
                  Description:
                    Returns normalized XY
                    1.1 Centroid
                    1.2 pointA
                    1.3 pointB
                    2.1 Head
                    2.2 Thorax
                    2.3 Abdomen
                    2.4 Lwing
                    2.5 Rwing
                  Script:
                    import clr
                    clr.AddReference("OpenCV.Net")
                    from OpenCV.Net import *
                    from System import Tuple, Math, Single

                    @returns(Point2f)
                    def process(value):
                      cropMiddle = Point2f(value.Item1.Width / 2, value.Item1.Height / 2)

                      flyCentroid = value.Item2

                      correction = flyCentroid - cropMiddle

                      return correction
                -> PublishSubject CropCorrection

                SubscribeSubject PoseStream
                -> GroupWorkflow NormalizedBodyParts
                    WorkflowInput Source1 => #0
                    -> GroupWorkflow ViewPoints => #1
                        WorkflowInput Source1 => #0
                        -> Bonsai.Sleap.GetBodyPart(Name=Left)
                        -> GroupWorkflow Normalizer => #2
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=Right)
                        -> GroupWorkflow Normalizer => #4
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=Top)
                        -> GroupWorkflow Normalizer => #6
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #2, #4, #6 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                          Expression:
                            new(
                            Item1 as Left,
                            Item2 as Right,
                            Item3 as Top)
                        -> WorkflowOutput
                    #0 -> GroupWorkflow BodyPoints => #2
                        WorkflowInput Source1 => #0
                        -> Bonsai.Sleap.GetBodyPart(Name=Head)
                        -> GroupWorkflow Normalizer => #2
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=Thorax)
                        -> GroupWorkflow Normalizer => #4
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=Abdomen)
                        -> GroupWorkflow Normalizer => #6
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=LeftWing)
                        -> GroupWorkflow Normalizer => #8
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=RightWing)
                        -> GroupWorkflow Normalizer => #10
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawVideo.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #2, #4, #6, #8, #10 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                          Expression:
                            new(
                            Item1 as Head,
                            Item2 as Thorax,
                            Item3 as Abdomen,
                            Item4 as LeftWing,
                            Item5 as RightWing
                            )
                        -> WorkflowOutput
                    #1, #2 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                      Expression:
                        new(
                        Item1 as ViewPoints,
                        Item2 as BodyPoints)
                    -> WorkflowOutput
                -> PublishSubject NormalizedBodyParts
                -> WorkflowOutput
            SubscribeSubject SleapModelConfiguration
            -> MemberSelector(Selector=EnableSleap)
            -> Condition => #18
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #18 -> SubscribeWhen

            GroupWorkflow VisualizerOut
                SubscribeSubject CenteredVideo => #0
                SubscribeSubject Video&Stimuli => #1
                -> MemberSelector(Selector=FrameCount_Video)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #3
                  Expression: new(it as FrameCount_ArenaStream)
                #1 -> MemberSelector(Selector=Stimuli) => #4
                SubscribeSubject ArenaAnnotation => #5
                SubscribeSubject PixelChange => #6
                #0, #3, #4, #5, #6 -> Zip => #7
                SubscribeSubject ArenaIndex => #8
                #7, #8 -> WithLatestFrom => #9
                SubscribeSubject SessionPaths
                -> MemberSelector(Selector=FileName) => #11
                #9, #11 -> WithLatestFrom => #12
                -> MemberSelector(Selector=Item1.Item2) => #13
                #12 -> MemberSelector(Selector=Item1.Item1.Item1) => #14
                #12 -> MemberSelector(Selector=Item1.Item1.Item2) => #15
                #12 -> MemberSelector(Selector=Item1.Item1.Item3) => #16
                #12 -> MemberSelector(Selector=Item2) => #17
                #12 -> MemberSelector(Selector=Item1.Item1.Item4) => #18
                #12 -> MemberSelector(Selector=Item1.Item1.Item5) => #19
                #13, #14, #15, #16, #17, #18, #19 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                  Expression:
                    new(
                    Item1 as ArenaIndex,
                    Item2 as CenteredVideo,
                    Item3 as FrameCount,
                    Item4 as Stimuli,
                    Item5 as Filename,
                    Item6 as ArenaAnnotation,
                    Item7 as PixelChange
                    )
                -> WorkflowOutput
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> WorkflowOutput
-> Concat
-> GroupWorkflow Visualizers
    WorkflowInput Source1
    -> GroupWorkflow Parse
        WorkflowInput Source1 => #0
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> PublishSubject Output
        #0 -> Condition Arena1
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> PublishSubject Arena1
        #0 -> Condition Arena2
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> PublishSubject Arena2
        #0 -> Condition Arena3
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> PublishSubject Arena3
        #0 -> Condition Arena4
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaIndex) => #1
            ExternalizedMapping(Value(DisplayName=Arena)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> PublishSubject Arena4

    SubscribeSubject Output
    -> MemberSelector(Selector=FrameCount)
    -> TakeLast(Count=1)
    -> PublishSubject LastFrame

    SubscribeSubject Output
    -> MemberSelector(Selector=Filename)
    -> DistinctUntilChanged
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #9
    GroupWorkflow VirtualLED
        SubscribeSubject Arena1
        -> MemberSelector(Selector=CenteredVideo)
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=600, Height=210), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #2
        SubscribeSubject Output
        -> MemberSelector(Selector=Stimuli.Visual)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int, int])
            def process(value):
              if value == 0:
                return Tuple.Create(50,50,50, 255)
              if value == 1:
                return Tuple.Create(200,200,200, 255)
        -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #6
        #2, #6 -> Bonsai.Vision.Drawing.Circle(Center(X=110, Y=125), Radius=70, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
        -> Bonsai.Vision.Drawing.AddText => #8
          Text=Visual
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 20pt"
          Origin(X=47, Y=5)
        SubscribeSubject Output
        -> MemberSelector(Selector=Stimuli.Stim0)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int, int])
            def process(value):
              if value == 0:
                return Tuple.Create(50,50,50, 255)
              if value == 1:
                return Tuple.Create(50,50,200, 255)
        -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #12
        #8, #12 -> Bonsai.Vision.Drawing.Circle(Center(X=300, Y=125), Radius=70, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
        -> Bonsai.Vision.Drawing.AddText => #14
          Text=Stim0
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 20pt"
          Origin(X=243, Y=5)
        SubscribeSubject Output
        -> MemberSelector(Selector=Stimuli.Stim1)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int, int])
            def process(value):
              if value == 0:
                return Tuple.Create(50,50,50, 255)
              if value == 1:
                return Tuple.Create(200,200,50, 255)
        -> PropertyMapping(Color(Selector="Item1,Item2,Item3,Item4")) => #18
        #14, #18 -> Bonsai.Vision.Drawing.Circle(Center(X=480, Y=125), Radius=70, Color(Val0=50, Val1=50, Val2=50, Val3=255), Thickness=-1, LineType=Connected8, Shift=0)
        -> Bonsai.Vision.Drawing.AddText
          Text=Stim1
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 20pt"
          Origin(X=423, Y=5)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #11
    GroupWorkflow TimeCount
        SubscribeSubject Output
        -> MemberSelector(Selector=Filename)
        -> DistinctUntilChanged
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> Format(Format="File:      {0} ", Selector=it)
        -> PublishSubject FileNumber

        SubscribeSubject Output
        -> MemberSelector(Selector=FrameCount.FrameCount_ArenaStream)
        -> Format(Format="Frame: {0}", Selector=it)
        -> PublishSubject FrameCount

        SubscribeSubject Output
        -> MemberSelector(Selector=Filename)
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalSeconds)
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Format(Format="Time:   {0} ", Selector=it) => #18
        SubscribeSubject FileNumber => #19
        #18, #19 -> SubscribeWhen
        -> PublishSubject SessionTimer

        SubscribeSubject Output
        -> MemberSelector(Selector=Filename)
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalSeconds)
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Format(Format="File:   {0} ", Selector=it)
        -> PublishSubject FileTimer => #29
        SubscribeSubject FileNumber => #30
        #29, #30 -> TakeUntil
        -> Repeat

        SubscribeSubject Arena1
        -> MemberSelector(Selector=CenteredVideo)
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1500, Height=210), Depth=U8, Channels=3, Color(Val0=32, Val1=32, Val2=32, Val3=0)) => #35
        SubscribeSubject FileNumber
        -> PropertyMapping(Text) => #37
        #35, #37 -> Bonsai.Vision.Drawing.AddText => #38
          Text="File:      1 "
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=200, Val1=200, Val2=200, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Origin(X=30, Y=5)
        SubscribeSubject FrameCount
        -> PropertyMapping(Text) => #40
        #38, #40 -> Bonsai.Vision.Drawing.AddText => #41
          Text="Frame: 29117"
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=200, Val1=200, Val2=200, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Origin(X=30, Y=100)
        SubscribeSubject SessionTimer
        -> PropertyMapping(Text) => #43
        #41, #43 -> Bonsai.Vision.Drawing.AddText => #44
          Text="Time:   00:35:43.5900000 "
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=200, Val1=200, Val2=200, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Origin(X=750, Y=5)
        SubscribeSubject FileTimer
        -> PropertyMapping(Text) => #46
        #44, #46 -> Bonsai.Vision.Drawing.AddText
          Text="File:   00:35:43.5900000 "
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=200, Val1=200, Val2=200, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Origin(X=810, Y=100)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #13
    SubscribeSubject Arena1
    -> MemberSelector(Selector=ArenaAnnotation)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #16
    SubscribeSubject Arena2
    -> MemberSelector(Selector=ArenaAnnotation)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #19
    SubscribeSubject Arena1
    -> MemberSelector(Selector=CenteredVideo)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #22
    SubscribeSubject Arena1
    -> MemberSelector(Selector=PixelChange)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #25
    SubscribeSubject Arena2
    -> MemberSelector(Selector=CenteredVideo)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #28
    SubscribeSubject Arena2
    -> MemberSelector(Selector=PixelChange)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #31
    SubscribeSubject Arena3
    -> MemberSelector(Selector=ArenaAnnotation)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #34
    SubscribeSubject Arena4
    -> MemberSelector(Selector=ArenaAnnotation)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #37
    SubscribeSubject Arena3
    -> MemberSelector(Selector=CenteredVideo)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #40
    SubscribeSubject Arena3
    -> MemberSelector(Selector=PixelChange)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #43
    SubscribeSubject Arena4
    -> MemberSelector(Selector=CenteredVideo)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #46
    SubscribeSubject Arena4
    -> MemberSelector(Selector=PixelChange)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #49
    #9, #11, #13, #16, #19, #22, #25, #28, #31, #34, #37, #40, #43, #46, #49 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 14pt, style=Bold"
      ColumnCount=21
      RowCount=15
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=21, RowSpan=1)
        CellSpan(ColumnSpan=6, RowSpan=2)
        CellSpan(ColumnSpan=15, RowSpan=2)
        CellSpan(ColumnSpan=6, RowSpan=6)
        CellSpan(ColumnSpan=6, RowSpan=6)
        CellSpan(ColumnSpan=3, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=3)
        CellSpan(ColumnSpan=3, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=6)
        CellSpan(ColumnSpan=6, RowSpan=6)
        CellSpan(ColumnSpan=3, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=3)
        CellSpan(ColumnSpan=3, RowSpan=3)
        CellSpan(ColumnSpan=6, RowSpan=3)
    -> Bonsai.Design.VisualizerWindow(Visible=true, Location(X=0, Y=100), Size(Width=1350, Height=900), WindowState=Normal)
    -> WorkflowOutput
-> GroupWorkflow EndRoutine
    WorkflowInput Source1 => #0
    SubscribeSubject LastFrame => #1
    #0, #1 -> TakeUntil
    -> TakeLast(Count=1)
    -> WorkflowOutput
-> WorkflowOutput
